[
    {
        "object.className": "ProtImportMovies",
        "object.id": "8000",
        "object.label": "pwem - import movies",
        "object.comment": "Import 30 EMPIAR-10248 apoferritin movies",
        "_useQueue": true,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "importFrom": 0,
        "filesPath": "/projects/EMPIAR/",
        "filesPattern": "*.tiff",
        "copyFiles": false,
        "haveDataBeenPhaseFlipped": false,
        "acquisitionWizard": null,
        "voltage": 300.0,
        "sphericalAberration": 2.7,
        "amplitudeContrast": 0.1,
        "magnification": 50000,
        "samplingRateMode": 0,
        "samplingRate": 0.495,
        "scannedPixelSize": 7.0,
        "doseInitial": 0.0,
        "dosePerFrame": null,
        "gainFile": "/projects/EMPIAR/gain.mrc",
        "darkFile": null,
        "dataStreaming": false,
        "timeout": 43200,
        "fileTimeout": 30,
        "blacklistDateFrom": null,
        "blacklistDateTo": null,
        "useRegexps": true,
        "blacklistFile": null,
        "inputIndividualFrames": false,
        "numberOfIndividualFrames": null,
        "stackFrames": false,
        "writeMoviesInProject": false,
        "movieSuffix": "_frames.mrcs",
        "deleteFrames": false
    },
    {
        "object.className": "XmippProtMovieGain",
        "object.id": "8100",
        "object.label": "xmipp3 - movie gain",
        "object.comment": "Gain reference estimation (Xmipp)",
        "_useQueue": true,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "frameStep": 5,
        "movieStep": 250,
        "estimateOrientation": true,
        "normalizeGain": true,
        "useExistingGainImage": true,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "numberOfMpi": 1,
        "inputMovies": "8000.outputMovies"
    },
    {
        "object.className": "XmippProtFlexAlign",
        "object.id": "8200",
        "object.label": "xmipp3 - FlexAlign motion correction",
        "object.comment": "GPU-accelerated motion correction (Xmipp)",
        "_useQueue": true,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "alignFrame0": 1,
        "alignFrameN": 0,
        "useAlignToSum": true,
        "sumFrame0": 1,
        "sumFrameN": 0,
        "binFactor": 1.0,
        "cropOffsetX": 0,
        "cropOffsetY": 0,
        "cropDimX": 0,
        "cropDimY": 0,
        "doSaveAveMic": true,
        "doSaveMovie": false,
        "splineOrder": 1,
        "useGpu": false,
        "gpuList": "0",
        "maxResForCorrelation": 30.0,
        "doComputePSD": true,
        "maxShift": 30,
        "outsideMode": 0,
        "doLocalAlignment": false,
        "autoControlPoints": true,
        "minLocalRes": 500.0,
        "skipAutotuning": false,
        "controlPointX": 9,
        "controlPointY": 9,
        "controlPointT": 10,
        "groupNFrames": 3,
        "outsideValue": 0.0,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 1,
        "inputMovies": "8100.outputMovies"
    },
    {
        "object.className": "XmippProtMovieMaxShift",
        "object.id": "8300",
        "object.label": "xmipp3 - movie maxshift",
        "object.comment": "Quality filter: discard movies with excessive drift",
        "_useQueue": true,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "rejType": 3,
        "maxFrameShift": 500.0,
        "maxMovieShift": 500.0,
        "inputMovies": "8200.outputMovies"
    },
    {
        "object.className": "CistemProtCTFFind",
        "object.id": "8400",
        "object.label": "cistem - ctffind4",
        "object.comment": "CTF estimation using CTFFind 5.0.2",
        "_useQueue": true,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "recalculate": false,
        "sqliteFile": null,
        "inputType": 1,
        "avgFrames": 3,
        "usePowerSpectra": false,
        "windowSize": 512,
        "lowRes": 30.0,
        "highRes": 5.0,
        "minDefocus": 5000.0,
        "maxDefocus": 50000.0,
        "stepDefocus": 100.0,
        "slowSearch": false,
        "fixAstig": true,
        "astigmatism": 100.0,
        "findPhaseShift": false,
        "minPhaseShift": 0.0,
        "maxPhaseShift": 180.0,
        "stepPhaseShift": 10.0,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "numberOfMpi": 1,
        "streamingWarning": null,
        "streamingSleepOnWait": 0,
        "streamingBatchSize": 1,
        "inputMicrographs": "8300.outputMicrographs"
    },
    {
        "object.className": "ProtRelionAutopickLoG",
        "object.id": "8500",
        "object.label": "relion - auto-picking LoG",
        "object.comment": "Laplacian-of-Gaussian particle picking (direct from MaxShift micrographs)",
        "_useQueue": true,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "boxSize": 300,
        "minDiameter": 80,
        "maxDiameter": 180,
        "areParticlesWhite": false,
        "maxResolution": 20.0,
        "threshold": 0.0,
        "threshold2": 999.0,
        "extraParams": "",
        "streamingWarning": null,
        "streamingSleepOnWait": 0,
        "streamingBatchSize": 0,
        "hostName": "localhost",
        "numberOfMpi": 1,
        "inputMicrographs": "8300.outputMicrographs"
    },
    {
        "object.className": "XmippProtExtractParticles",
        "object.id": "8600",
        "object.label": "xmipp3 - extract particles",
        "object.comment": "Extract particle images from micrographs",
        "_useQueue": true,
        "_prerequisites": "8400",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "downsampleType": 0,
        "downFactor": 2.0,
        "boxSize": 300,
        "doBorders": false,
        "doRemoveDust": true,
        "thresholdDust": 5.0,
        "doInvert": true,
        "doFlip": false,
        "doNormalize": true,
        "normType": 2,
        "backRadius": -1,
        "patchSize": -1,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "numberOfMpi": 1,
        "inputCoordinates": "8500.outputCoordinates",
        "ctfRelations": "8400.outputCTF"
    },
    {
        "object.className": "XmippProtEliminateEmptyParticles",
        "object.id": "8700",
        "object.label": "xmipp3 - eliminate empty particles",
        "object.comment": "Remove junk/empty particle images",
        "_useQueue": true,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "addFeatures": false,
        "threshold": 1.1,
        "useDenoising": true,
        "denoising": 5,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 1,
        "inputParticles": "8600.outputParticles"
    },
    {
        "object.className": "XmippProtCL2D",
        "object.id": "8800",
        "object.label": "xmipp3 - CL2D classification",
        "object.comment": "2D classification using Xmipp CL2D algorithm",
        "_useQueue": true,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "numberOfClasses": 16,
        "numberOfInitialClasses": 4,
        "numberOfIterations": 10,
        "comparisonMethod": 0,
        "clusteringMethod": 0,
        "randomInitialization": true,
        "doCore": true,
        "doStableCore": true,
        "tolerance": 1,
        "thZscore": 3.0,
        "thPCAZscore": 3.0,
        "analyzeRejected": false,
        "computeHierarchy": false,
        "extraParams": null,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 4,
        "inputParticles": "8700.outputParticles"
    }
]