[
    {
        "object.className": "ProtImportMovies",
        "object.id": "9000",
        "object.label": "pwem - import movies",
        "object.comment": "Import EMPIAR-10248 apoferritin movies for quick validation",
        "_useQueue": true,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "importFrom": 0,
        "filesPath": "/projects/EMPIAR/",
        "filesPattern": "*.tiff",
        "copyFiles": false,
        "haveDataBeenPhaseFlipped": false,
        "acquisitionWizard": null,
        "voltage": 300.0,
        "sphericalAberration": 2.7,
        "amplitudeContrast": 0.1,
        "magnification": 50000,
        "samplingRateMode": 0,
        "samplingRate": 0.495,
        "scannedPixelSize": 7.0,
        "doseInitial": 0.0,
        "dosePerFrame": null,
        "gainFile": "/projects/EMPIAR/gain.mrc",
        "darkFile": null,
        "dataStreaming": false,
        "timeout": 43200,
        "fileTimeout": 30,
        "blacklistDateFrom": null,
        "blacklistDateTo": null,
        "useRegexps": true,
        "blacklistFile": null,
        "inputIndividualFrames": false,
        "numberOfIndividualFrames": null,
        "stackFrames": false,
        "writeMoviesInProject": false,
        "movieSuffix": "_frames.mrcs",
        "deleteFrames": false
    },
    {
        "object.className": "XmippProtMovieGain",
        "object.id": "9100",
        "object.label": "xmipp3 - movie gain",
        "object.comment": "Gain reference estimation",
        "_useQueue": true,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "frameStep": 5,
        "movieStep": 250,
        "estimateOrientation": true,
        "normalizeGain": true,
        "useExistingGainImage": true,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "numberOfMpi": 1,
        "inputMovies": "9000.outputMovies"
    },
    {
        "object.className": "XmippProtFlexAlign",
        "object.id": "9200",
        "object.label": "xmipp3 - FlexAlign motion correction",
        "object.comment": "Global motion correction (CPU mode)",
        "_useQueue": true,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "alignFrame0": 1,
        "alignFrameN": 0,
        "useAlignToSum": true,
        "sumFrame0": 1,
        "sumFrameN": 0,
        "binFactor": 1.0,
        "cropOffsetX": 0,
        "cropOffsetY": 0,
        "cropDimX": 0,
        "cropDimY": 0,
        "doSaveAveMic": true,
        "doSaveMovie": false,
        "splineOrder": 1,
        "useGpu": false,
        "gpuList": "0",
        "maxResForCorrelation": 30.0,
        "doComputePSD": true,
        "maxShift": 30,
        "outsideMode": 0,
        "doLocalAlignment": false,
        "autoControlPoints": true,
        "minLocalRes": 500.0,
        "skipAutotuning": false,
        "controlPointX": 9,
        "controlPointY": 9,
        "controlPointT": 10,
        "groupNFrames": 3,
        "outsideValue": 0.0,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 1,
        "inputMovies": "9100.outputMovies"
    },
    {
        "object.className": "XmippProtMovieMaxShift",
        "object.id": "9300",
        "object.label": "xmipp3 - movie maxshift",
        "object.comment": "Filter movies by shift quality",
        "_useQueue": true,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "maxFrameShift": 500.0,
        "maxMovieShift": 500.0,
        "rejType": 0,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 1,
        "inputMovies": "9200.outputMovies"
    },
    {
        "object.className": "CistemProtCTFFind",
        "object.id": "9400",
        "object.label": "cistem - ctffind4",
        "object.comment": "CTF estimation with CTFFind",
        "_useQueue": true,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "recalculate": false,
        "sqliteFile": null,
        "useCtffind4": true,
        "inputType": 1,
        "lowRes": 30.0,
        "highRes": 5.0,
        "minDefocus": 5000.0,
        "maxDefocus": 50000.0,
        "stepDefocus": 100.0,
        "windowSize": 512,
        "slowSearch": false,
        "astigmatism": 100.0,
        "fixAstig": true,
        "findPhaseShift": false,
        "minPhaseShift": 0.0,
        "maxPhaseShift": 180.0,
        "stepPhaseShift": 10.0,
        "numberOfThreads": 4,
        "numberOfMpi": 1,
        "inputMicrographs": "9300.outputMicrographs",
        "hostName": "localhost",
        "streamingBatchSize": 1,
        "streamingSleepOnWait": 0
    }
]