[
    {
        "object.className": "ProtImportMovies",
        "object.id": "16000",
        "object.label": "pwem - import movies",
        "object.comment": "Import EMPIAR-10248 apoferritin movies for Reconstruct Significant",
        "_useQueue": true,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "importFrom": 0,
        "filesPath": "/projects/EMPIAR/",
        "filesPattern": "*.tiff",
        "copyFiles": false,
        "haveDataBeenPhaseFlipped": false,
        "acquisitionWizard": null,
        "voltage": 300.0,
        "sphericalAberration": 2.7,
        "amplitudeContrast": 0.1,
        "magnification": 50000,
        "samplingRateMode": 0,
        "samplingRate": 0.495,
        "scannedPixelSize": 7.0,
        "doseInitial": 0.0,
        "dosePerFrame": null,
        "gainFile": "/projects/EMPIAR/gain.mrc",
        "darkFile": null,
        "dataStreaming": false,
        "timeout": 43200,
        "fileTimeout": 30,
        "blacklistDateFrom": null,
        "blacklistDateTo": null,
        "useRegexps": true,
        "blacklistFile": null,
        "inputIndividualFrames": false,
        "numberOfIndividualFrames": null,
        "stackFrames": false,
        "writeMoviesInProject": false,
        "movieSuffix": "_frames.mrcs",
        "deleteFrames": false
    },
    {
        "object.className": "XmippProtMovieGain",
        "object.id": "16100",
        "object.label": "xmipp3 - movie gain",
        "object.comment": "Gain reference estimation",
        "_useQueue": true,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "frameStep": 5,
        "movieStep": 250,
        "estimateOrientation": true,
        "normalizeGain": true,
        "useExistingGainImage": true,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "numberOfMpi": 1,
        "inputMovies": "16000.outputMovies"
    },
    {
        "object.className": "XmippProtFlexAlign",
        "object.id": "16200",
        "object.label": "xmipp3 - FlexAlign motion correction",
        "object.comment": "Global motion correction (CPU mode)",
        "_useQueue": true,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "alignFrame0": 1,
        "alignFrameN": 0,
        "useAlignToSum": true,
        "sumFrame0": 1,
        "sumFrameN": 0,
        "binFactor": 1.0,
        "cropOffsetX": 0,
        "cropOffsetY": 0,
        "cropDimX": 0,
        "cropDimY": 0,
        "doSaveAveMic": true,
        "doSaveMovie": false,
        "splineOrder": 1,
        "useGpu": false,
        "gpuList": "0",
        "maxResForCorrelation": 30.0,
        "doComputePSD": true,
        "maxShift": 30,
        "outsideMode": 0,
        "doLocalAlignment": false,
        "autoControlPoints": true,
        "minLocalRes": 500.0,
        "skipAutotuning": false,
        "controlPointX": 9,
        "controlPointY": 9,
        "controlPointT": 10,
        "groupNFrames": 3,
        "outsideValue": 0.0,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 1,
        "inputMovies": "16100.outputMovies"
    },
    {
        "object.className": "XmippProtMovieMaxShift",
        "object.id": "16300",
        "object.label": "xmipp3 - movie maxshift",
        "object.comment": "Filter movies by shift quality",
        "_useQueue": true,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "maxFrameShift": 500.0,
        "maxMovieShift": 500.0,
        "rejType": 0,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 1,
        "inputMovies": "16200.outputMovies"
    },
    {
        "object.className": "CistemProtCTFFind",
        "object.id": "16400",
        "object.label": "cistem - ctffind4",
        "object.comment": "CTF estimation with CTFFind4",
        "_useQueue": true,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "recalculate": false,
        "sqliteFile": null,
        "inputType": 1,
        "lowRes": 30.0,
        "highRes": 5.0,
        "minDefocus": 5000.0,
        "maxDefocus": 50000.0,
        "stepDefocus": 100.0,
        "windowSize": 512,
        "slowSearch": false,
        "astigmatism": 100.0,
        "fixAstig": true,
        "findPhaseShift": false,
        "minPhaseShift": 0.0,
        "maxPhaseShift": 180.0,
        "stepPhaseShift": 10.0,
        "numberOfThreads": 4,
        "numberOfMpi": 1,
        "inputMicrographs": "16300.outputMicrographs",
        "hostName": "localhost",
        "streamingBatchSize": 1,
        "streamingSleepOnWait": 0
    },
    {
        "object.className": "XmippProtCTFMicrographs",
        "object.id": "16500",
        "object.label": "xmipp3 - ctf estimation",
        "object.comment": "CTF estimation using Xmipp (second estimator)",
        "_useQueue": true,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "recalculate": false,
        "sqliteFile": null,
        "AutoDownsampling": false,
        "ctfDownFactor": 2.0,
        "doInitialCTF": false,
        "doOptimizeDefocus": false,
        "findPhaseShift": false,
        "doCTFAutoDownsampling": true,
        "refineAmplitudeContrast": false,
        "skipBorders": false,
        "lowRes": 0.05,
        "highRes": 0.5,
        "minDefocus": 0.25,
        "maxDefocus": 4.0,
        "windowSize": 512,
        "hostName": "localhost",
        "numberOfThreads": 6,
        "numberOfMpi": 1,
        "inputMicrographs": "16300.outputMicrographs"
    },
    {
        "object.className": "XmippProtCTFConsensus",
        "object.id": "16600",
        "object.label": "xmipp3 - ctf consensus",
        "object.comment": "Cross-validate CTF estimates from CTFFind4 and Xmipp",
        "_useQueue": true,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "useDefocus": true,
        "minDefocus": 4000.0,
        "maxDefocus": 40000.0,
        "useAstigmatism": true,
        "astigmatism": 1000.0,
        "useResolution": true,
        "resolution": 7.0,
        "useCritXmipp": true,
        "critFirstZero": 5.0,
        "minCritFirstZeroRatio": 0.9,
        "maxCritFirstZeroRatio": 1.1,
        "critCorr": 0.05,
        "critCtfMargin": 1.5,
        "critIceness": 1.05,
        "minCritNonAstigmaticValidity": 0.3,
        "maxCritNonAstigmaticValidity": 9.0,
        "calculateConsensus": true,
        "minConsResol": 7.0,
        "averageDefocus": true,
        "includeSecondary": true,
        "hostName": "localhost",
        "inputCTF": "16400.outputCTF",
        "inputCTF2": "16500.outputCTF"
    },
    {
        "object.className": "ProtRelionAutopickLoG",
        "object.id": "16700",
        "object.label": "relion - auto-picking LoG",
        "object.comment": "Laplacian-of-Gaussian automatic particle picking",
        "_useQueue": true,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "boxSize": 300,
        "minDiameter": 80,
        "maxDiameter": 180,
        "areParticlesWhite": false,
        "maxResolution": 20.0,
        "threshold": 0.0,
        "threshold2": 999.0,
        "extraParams": "",
        "streamingWarning": null,
        "streamingSleepOnWait": 0,
        "streamingBatchSize": 0,
        "hostName": "localhost",
        "numberOfMpi": 1,
        "inputMicrographs": "16600.outputMicrographs"
    },
    {
        "object.className": "XmippProtExtractParticles",
        "object.id": "16800",
        "object.label": "xmipp3 - extract particles",
        "object.comment": "Extract particle images from micrographs",
        "_useQueue": true,
        "_prerequisites": "16600",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "downsampleType": 0,
        "downFactor": 2.0,
        "boxSize": 300,
        "doBorders": false,
        "doRemoveDust": true,
        "thresholdDust": 5.0,
        "doInvert": true,
        "doFlip": false,
        "doNormalize": true,
        "normType": 2,
        "backRadius": -1,
        "patchSize": -1,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "numberOfMpi": 1,
        "inputCoordinates": "16700.outputCoordinates",
        "ctfRelations": "16600.outputCTF"
    },
    {
        "object.className": "XmippProtReconstructSignificant",
        "object.id": "16900",
        "object.label": "xmipp3 - reconstruct significant",
        "object.comment": "Initial volume estimation using Reconstruct Significant (no GPU needed)",
        "_useQueue": true,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "symmetryGroup": "o",
        "iter": 15,
        "alpha0": 99.5,
        "alphaF": 99.5,
        "useMaxRes": false,
        "maxRes": 30.0,
        "angularSampling": 5.0,
        "minTilt": 0.0,
        "maxTilt": 180.0,
        "useImed": true,
        "strictDir": true,
        "nReco": 10,
        "keepIntermediate": false,
        "useGpu": false,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "numberOfMpi": 1,
        "inputSet": "16800.outputParticles"
    }
]
