[
    {
        "object.className": "ProtImportMovies",
        "object.id": "18000",
        "object.label": "pwem - import movies",
        "object.comment": "Import EMPIAR-10248 apoferritin movies (minimal pipeline)",
        "_useQueue": true,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "importFrom": 0,
        "filesPath": "/projects/EMPIAR/",
        "filesPattern": "*.tiff",
        "copyFiles": false,
        "haveDataBeenPhaseFlipped": false,
        "acquisitionWizard": null,
        "voltage": 300.0,
        "sphericalAberration": 2.7,
        "amplitudeContrast": 0.1,
        "magnification": 50000,
        "samplingRateMode": 0,
        "samplingRate": 0.495,
        "scannedPixelSize": 7.0,
        "doseInitial": 0.0,
        "dosePerFrame": null,
        "gainFile": "/projects/EMPIAR/gain.mrc",
        "darkFile": null,
        "dataStreaming": false,
        "timeout": 43200,
        "fileTimeout": 30,
        "blacklistDateFrom": null,
        "blacklistDateTo": null,
        "useRegexps": true,
        "blacklistFile": null,
        "inputIndividualFrames": false,
        "numberOfIndividualFrames": null,
        "stackFrames": false,
        "writeMoviesInProject": false,
        "movieSuffix": "_frames.mrcs",
        "deleteFrames": false
    },
    {
        "object.className": "XmippProtMovieGain",
        "object.id": "18050",
        "object.label": "xmipp3 - movie gain",
        "object.comment": "Gain reference estimation (required before motion correction)",
        "_useQueue": true,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "frameStep": 5,
        "movieStep": 250,
        "estimateOrientation": true,
        "normalizeGain": true,
        "useExistingGainImage": true,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "numberOfMpi": 1,
        "inputMovies": "18000.outputMovies"
    },
    {
        "object.className": "XmippProtFlexAlign",
        "object.id": "18100",
        "object.label": "xmipp3 - FlexAlign motion correction",
        "object.comment": "Motion correction with gain-corrected movies",
        "_useQueue": true,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "alignFrame0": 1,
        "alignFrameN": 0,
        "useAlignToSum": true,
        "sumFrame0": 1,
        "sumFrameN": 0,
        "binFactor": 1.0,
        "cropOffsetX": 0,
        "cropOffsetY": 0,
        "cropDimX": 0,
        "cropDimY": 0,
        "doSaveAveMic": true,
        "doSaveMovie": false,
        "splineOrder": 1,
        "useGpu": false,
        "gpuList": "0",
        "maxResForCorrelation": 30.0,
        "doComputePSD": true,
        "maxShift": 30,
        "outsideMode": 0,
        "doLocalAlignment": false,
        "autoControlPoints": true,
        "minLocalRes": 500.0,
        "skipAutotuning": false,
        "controlPointX": 9,
        "controlPointY": 9,
        "controlPointT": 10,
        "groupNFrames": 3,
        "outsideValue": 0.0,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 1,
        "inputMovies": "18050.outputMovies"
    },
    {
        "object.className": "CistemProtCTFFind",
        "object.id": "18200",
        "object.label": "cistem - ctffind4",
        "object.comment": "CTF estimation with CTFFind4",
        "_useQueue": true,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "recalculate": false,
        "sqliteFile": null,
        "inputType": 1,
        "lowRes": 30.0,
        "highRes": 5.0,
        "minDefocus": 5000.0,
        "maxDefocus": 50000.0,
        "stepDefocus": 100.0,
        "windowSize": 512,
        "slowSearch": false,
        "astigmatism": 100.0,
        "fixAstig": true,
        "findPhaseShift": false,
        "minPhaseShift": 0.0,
        "maxPhaseShift": 180.0,
        "stepPhaseShift": 10.0,
        "numberOfThreads": 4,
        "numberOfMpi": 1,
        "inputMicrographs": "18100.outputMicrographs",
        "hostName": "localhost",
        "streamingBatchSize": 1,
        "streamingSleepOnWait": 0
    },
    {
        "object.className": "ProtRelionAutopickLoG",
        "object.id": "18300",
        "object.label": "relion - auto-picking LoG",
        "object.comment": "Laplacian-of-Gaussian automatic particle picking",
        "_useQueue": true,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "boxSize": 300,
        "minDiameter": 80,
        "maxDiameter": 180,
        "areParticlesWhite": false,
        "maxResolution": 20.0,
        "threshold": 0.0,
        "threshold2": 999.0,
        "extraParams": "",
        "streamingWarning": null,
        "streamingSleepOnWait": 0,
        "streamingBatchSize": 0,
        "hostName": "localhost",
        "numberOfMpi": 1,
        "inputMicrographs": "18100.outputMicrographs"
    },
    {
        "object.className": "XmippProtExtractParticles",
        "object.id": "18400",
        "object.label": "xmipp3 - extract particles",
        "object.comment": "Extract particle images from micrographs",
        "_useQueue": true,
        "_prerequisites": "18200",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "downsampleType": 0,
        "downFactor": 2.0,
        "boxSize": 300,
        "doBorders": false,
        "doRemoveDust": true,
        "thresholdDust": 5.0,
        "doInvert": true,
        "doFlip": false,
        "doNormalize": true,
        "normType": 2,
        "backRadius": -1,
        "patchSize": -1,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "numberOfMpi": 1,
        "inputCoordinates": "18300.outputCoordinates",
        "ctfRelations": "18200.outputCTF"
    },
    {
        "object.className": "ProtRelionClassify2D",
        "object.id": "18500",
        "object.label": "relion - 2D classification",
        "object.comment": "2D class averaging (minimal pipeline endpoint)",
        "_useQueue": true,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "isClassify": true,
        "is2D": true,
        "doContinue": false,
        "copyAlignment": false,
        "alignmentAsPriors": false,
        "fillRandomSubset": true,
        "maskDiameterA": 120,
        "maskZero": 0,
        "continueIter": "last",
        "continueMsg": "True",
        "doCTF": true,
        "haveDataBeenPhaseFlipped": null,
        "ignoreCTFUntilFirstPeak": false,
        "doCtfManualGroups": false,
        "defocusRange": 1000.0,
        "numParticles": 10.0,
        "numberOfClasses": 10,
        "regularisationParamT": 2.0,
        "numberOfIterations": 15,
        "limitResolEStep": -1.0,
        "doImageAlignment": true,
        "inplaneAngularSamplingDeg": 6.0,
        "offsetSearchRangePix": 5.0,
        "offsetSearchStepPix": 1.0,
        "useGradientAlg": true,
        "numberOfVDAMBatches": 100,
        "centerAvg": true,
        "useParallelDisk": true,
        "pooledParticles": 3,
        "allParticlesRam": true,
        "scratchDir": null,
        "combineItersDisc": false,
        "doGpu": false,
        "gpusToUse": "",
        "oversampling": 1,
        "extraParams": "",
        "hostName": "localhost",
        "numberOfThreads": 4,
        "numberOfMpi": 1,
        "inputParticles": "18400.outputParticles"
    }
]
