[
    {
        "object.className": "ProtImportMovies",
        "object.id": "20000",
        "object.label": "pwem - import movies",
        "object.comment": "Import EMPIAR-10248 apoferritin movies for 3D refinement",
        "_useQueue": true,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "importFrom": 0,
        "filesPath": "/projects/EMPIAR/",
        "filesPattern": "*.tiff",
        "copyFiles": false,
        "haveDataBeenPhaseFlipped": false,
        "acquisitionWizard": null,
        "voltage": 300.0,
        "sphericalAberration": 2.7,
        "amplitudeContrast": 0.1,
        "magnification": 50000,
        "samplingRateMode": 0,
        "samplingRate": 0.495,
        "scannedPixelSize": 7.0,
        "doseInitial": 0.0,
        "dosePerFrame": null,
        "gainFile": "/projects/EMPIAR/gain.mrc",
        "darkFile": null,
        "dataStreaming": false,
        "timeout": 43200,
        "fileTimeout": 30,
        "blacklistDateFrom": null,
        "blacklistDateTo": null,
        "useRegexps": true,
        "blacklistFile": null,
        "inputIndividualFrames": false,
        "numberOfIndividualFrames": null,
        "stackFrames": false,
        "writeMoviesInProject": false,
        "movieSuffix": "_frames.mrcs",
        "deleteFrames": false
    },
    {
        "object.className": "XmippProtMovieGain",
        "object.id": "20100",
        "object.label": "xmipp3 - movie gain",
        "object.comment": "Gain reference estimation",
        "_useQueue": true,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "frameStep": 5,
        "movieStep": 250,
        "estimateOrientation": true,
        "normalizeGain": true,
        "useExistingGainImage": true,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "numberOfMpi": 1,
        "inputMovies": "20000.outputMovies"
    },
    {
        "object.className": "XmippProtFlexAlign",
        "object.id": "20200",
        "object.label": "xmipp3 - FlexAlign motion correction",
        "object.comment": "Global motion correction (CPU mode)",
        "_useQueue": true,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "alignFrame0": 1,
        "alignFrameN": 0,
        "useAlignToSum": true,
        "sumFrame0": 1,
        "sumFrameN": 0,
        "binFactor": 1.0,
        "cropOffsetX": 0,
        "cropOffsetY": 0,
        "cropDimX": 0,
        "cropDimY": 0,
        "doSaveAveMic": true,
        "doSaveMovie": false,
        "splineOrder": 1,
        "useGpu": false,
        "gpuList": "0",
        "maxResForCorrelation": 30.0,
        "doComputePSD": true,
        "maxShift": 30,
        "outsideMode": 0,
        "doLocalAlignment": false,
        "autoControlPoints": true,
        "minLocalRes": 500.0,
        "skipAutotuning": false,
        "controlPointX": 9,
        "controlPointY": 9,
        "controlPointT": 10,
        "groupNFrames": 3,
        "outsideValue": 0.0,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 1,
        "inputMovies": "20100.outputMovies"
    },
    {
        "object.className": "XmippProtMovieMaxShift",
        "object.id": "20300",
        "object.label": "xmipp3 - movie maxshift",
        "object.comment": "Filter movies by shift quality",
        "_useQueue": true,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "maxFrameShift": 500.0,
        "maxMovieShift": 500.0,
        "rejType": 0,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 1,
        "inputMovies": "20200.outputMovies"
    },
    {
        "object.className": "CistemProtCTFFind",
        "object.id": "20400",
        "object.label": "cistem - ctffind4",
        "object.comment": "CTF estimation with CTFFind4",
        "_useQueue": true,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "recalculate": false,
        "sqliteFile": null,
        "inputType": 1,
        "lowRes": 30.0,
        "highRes": 5.0,
        "minDefocus": 5000.0,
        "maxDefocus": 50000.0,
        "stepDefocus": 100.0,
        "windowSize": 512,
        "slowSearch": false,
        "astigmatism": 100.0,
        "fixAstig": true,
        "findPhaseShift": false,
        "minPhaseShift": 0.0,
        "maxPhaseShift": 180.0,
        "stepPhaseShift": 10.0,
        "numberOfThreads": 4,
        "numberOfMpi": 1,
        "inputMicrographs": "20300.outputMicrographs",
        "hostName": "localhost",
        "streamingBatchSize": 1,
        "streamingSleepOnWait": 0
    },
    {
        "object.className": "XmippProtCTFMicrographs",
        "object.id": "20500",
        "object.label": "xmipp3 - ctf estimation",
        "object.comment": "CTF estimation using Xmipp (second estimator)",
        "_useQueue": true,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "recalculate": false,
        "sqliteFile": null,
        "AutoDownsampling": false,
        "ctfDownFactor": 2.0,
        "doInitialCTF": false,
        "doOptimizeDefocus": false,
        "findPhaseShift": false,
        "doCTFAutoDownsampling": true,
        "refineAmplitudeContrast": false,
        "skipBorders": false,
        "lowRes": 0.05,
        "highRes": 0.5,
        "minDefocus": 0.25,
        "maxDefocus": 4.0,
        "windowSize": 512,
        "hostName": "localhost",
        "numberOfThreads": 6,
        "numberOfMpi": 1,
        "inputMicrographs": "20300.outputMicrographs"
    },
    {
        "object.className": "XmippProtCTFConsensus",
        "object.id": "20600",
        "object.label": "xmipp3 - ctf consensus",
        "object.comment": "Cross-validate CTF estimates",
        "_useQueue": true,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "useDefocus": true,
        "minDefocus": 4000.0,
        "maxDefocus": 40000.0,
        "useAstigmatism": true,
        "astigmatism": 1000.0,
        "useResolution": true,
        "resolution": 7.0,
        "useCritXmipp": true,
        "critFirstZero": 5.0,
        "minCritFirstZeroRatio": 0.9,
        "maxCritFirstZeroRatio": 1.1,
        "critCorr": 0.05,
        "critCtfMargin": 1.5,
        "critIceness": 1.05,
        "minCritNonAstigmaticValidity": 0.3,
        "maxCritNonAstigmaticValidity": 9.0,
        "calculateConsensus": true,
        "minConsResol": 7.0,
        "averageDefocus": true,
        "includeSecondary": true,
        "hostName": "localhost",
        "inputCTF": "20400.outputCTF",
        "inputCTF2": "20500.outputCTF"
    },
    {
        "object.className": "ProtRelionAutopickLoG",
        "object.id": "20700",
        "object.label": "relion - auto-picking LoG",
        "object.comment": "Laplacian-of-Gaussian automatic particle picking",
        "_useQueue": true,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "boxSize": 300,
        "minDiameter": 80,
        "maxDiameter": 180,
        "areParticlesWhite": false,
        "maxResolution": 20.0,
        "threshold": 0.0,
        "threshold2": 999.0,
        "extraParams": "",
        "streamingWarning": null,
        "streamingSleepOnWait": 0,
        "streamingBatchSize": 0,
        "hostName": "localhost",
        "numberOfMpi": 1,
        "inputMicrographs": "20600.outputMicrographs"
    },
    {
        "object.className": "XmippProtExtractParticles",
        "object.id": "20800",
        "object.label": "xmipp3 - extract particles",
        "object.comment": "Extract particle images from micrographs",
        "_useQueue": true,
        "_prerequisites": "20600",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "downsampleType": 0,
        "downFactor": 2.0,
        "boxSize": 300,
        "doBorders": false,
        "doRemoveDust": true,
        "thresholdDust": 5.0,
        "doInvert": true,
        "doFlip": false,
        "doNormalize": true,
        "normType": 2,
        "backRadius": -1,
        "patchSize": -1,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "numberOfMpi": 1,
        "inputCoordinates": "20700.outputCoordinates",
        "ctfRelations": "20600.outputCTF"
    },
    {
        "object.className": "ProtRelionClassify2D",
        "object.id": "20900",
        "object.label": "relion - 2D classification",
        "object.comment": "2D class averaging for particle curation",
        "_useQueue": true,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "isClassify": true,
        "is2D": true,
        "doContinue": false,
        "copyAlignment": false,
        "alignmentAsPriors": false,
        "fillRandomSubset": true,
        "maskDiameterA": 120,
        "maskZero": 0,
        "continueIter": "last",
        "continueMsg": "True",
        "doCTF": true,
        "haveDataBeenPhaseFlipped": null,
        "ignoreCTFUntilFirstPeak": false,
        "doCtfManualGroups": false,
        "defocusRange": 1000.0,
        "numParticles": 10.0,
        "numberOfClasses": 10,
        "regularisationParamT": 2.0,
        "numberOfIterations": 15,
        "limitResolEStep": -1.0,
        "doImageAlignment": true,
        "inplaneAngularSamplingDeg": 6.0,
        "offsetSearchRangePix": 5.0,
        "offsetSearchStepPix": 1.0,
        "useGradientAlg": true,
        "numberOfVDAMBatches": 100,
        "centerAvg": true,
        "useParallelDisk": true,
        "pooledParticles": 3,
        "allParticlesRam": true,
        "scratchDir": null,
        "combineItersDisc": false,
        "doGpu": false,
        "gpusToUse": "",
        "oversampling": 1,
        "extraParams": "",
        "hostName": "localhost",
        "numberOfThreads": 4,
        "numberOfMpi": 1,
        "inputParticles": "20800.outputParticles"
    },
    {
        "object.className": "ProtRelionInitialModel",
        "object.id": "21000",
        "object.label": "relion - 3D initial model",
        "object.comment": "Ab-initio 3D initial model using SGD",
        "_useQueue": true,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "doContinue": false,
        "doCTF": true,
        "haveDataBeenPhaseFlipped": null,
        "ignoreCTFUntilFirstPeak": false,
        "doCtfManualGroups": false,
        "defocusRange": 1000.0,
        "numParticles": 10.0,
        "numberOfClasses": 1,
        "regularisationParamT": 4.0,
        "numberOfIter": 50,
        "maskDiameterA": 120,
        "symmetryGroup": "O",
        "doGpu": false,
        "gpusToUse": "",
        "allParticlesRam": true,
        "scratchDir": null,
        "combineItersDisc": false,
        "useParallelDisk": true,
        "pooledParticles": 3,
        "doFlattenSolvent": true,
        "runInC1": true,
        "extraParams": "",
        "hostName": "localhost",
        "numberOfThreads": 4,
        "numberOfMpi": 1,
        "inputParticles": "20800.outputParticles"
    },
    {
        "object.className": "ProtRelionClassify3D",
        "object.id": "21100",
        "object.label": "relion - 3D classification",
        "object.comment": "Heterogeneous 3D classification (uses extracted particles directly, 2D classification is standalone QC)",
        "_useQueue": true,
        "_prerequisites": "20800,21000",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "isClassify": true,
        "is2D": false,
        "doContinue": false,
        "copyAlignment": false,
        "alignmentAsPriors": false,
        "fillRandomSubset": true,
        "maskDiameterA": 120,
        "maskZero": 0,
        "referenceMask": null,
        "solventMask": null,
        "solventFscMask": false,
        "continueIter": "last",
        "continueMsg": "True",
        "doCTF": true,
        "haveDataBeenPhaseFlipped": null,
        "ignoreCTFUntilFirstPeak": false,
        "doCtfManualGroups": false,
        "defocusRange": 1000.0,
        "numParticles": 10.0,
        "numberOfClasses": 3,
        "regularisationParamT": 4.0,
        "numberOfIterations": 25,
        "limitResolEStep": -1.0,
        "doImageAlignment": true,
        "angularSamplingDeg": 2,
        "offsetSearchRangePix": 5.0,
        "offsetSearchStepPix": 1.0,
        "localAngularSearch": false,
        "localAngularSearchRange": 5.0,
        "symmetryGroup": "O",
        "doGpu": false,
        "gpusToUse": "",
        "useParallelDisk": true,
        "pooledParticles": 3,
        "allParticlesRam": true,
        "scratchDir": null,
        "combineItersDisc": false,
        "oversampling": 1,
        "extraParams": "",
        "hostName": "localhost",
        "numberOfThreads": 4,
        "numberOfMpi": 1,
        "inputParticles": "20800.outputParticles",
        "referenceVolume": "21000.outputVolume"
    },
    {
        "object.className": "ProtRelionRefine3D",
        "object.id": "21200",
        "object.label": "relion - 3D auto-refine",
        "object.comment": "Gold-standard 3D auto-refinement with octahedral symmetry (uses extracted particles directly)",
        "_useQueue": true,
        "_prerequisites": "20800,21000",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "isClassify": false,
        "is2D": false,
        "doContinue": false,
        "copyAlignment": false,
        "alignmentAsPriors": false,
        "fillRandomSubset": true,
        "maskDiameterA": 120,
        "maskZero": 0,
        "referenceMask": null,
        "solventMask": null,
        "solventFscMask": false,
        "isMapAbsoluteGreyScale": false,
        "symmetryGroup": "O",
        "initialLowPassFilterA": 60.0,
        "continueIter": "last",
        "continueMsg": "True",
        "doCTF": true,
        "haveDataBeenPhaseFlipped": null,
        "ignoreCTFUntilFirstPeak": false,
        "doCtfManualGroups": false,
        "defocusRange": 1000.0,
        "numParticles": 10.0,
        "doImageAlignment": true,
        "angularSamplingDeg": 2,
        "offsetSearchRangePix": 5.0,
        "offsetSearchStepPix": 1.0,
        "localSearchAutoSamplingDeg": 4,
        "relaxSymm": "",
        "useFinerSamplingFaster": false,
        "useBlush": false,
        "useParallelDisk": true,
        "pooledParticles": 3,
        "skipPadding": false,
        "allParticlesRam": false,
        "useScratch": 0,
        "scratchDir": null,
        "combineItersDisc": false,
        "doGpu": false,
        "gpusToUse": "",
        "oversampling": 1,
        "extraParams": "",
        "hostName": "localhost",
        "numberOfThreads": 4,
        "numberOfMpi": 1,
        "inputParticles": "20800.outputParticles",
        "referenceVolume": "21000.outputVolume"
    },
    {
        "object.className": "ProtRelionCreateMask3D",
        "object.id": "21300",
        "object.label": "relion - create 3D mask",
        "object.comment": "Create soft-edged 3D mask from refined volume for postprocessing",
        "_useQueue": true,
        "_prerequisites": "21200",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "initialLowPassFilterA": 15.0,
        "threshold": 0.02,
        "doCompare": false,
        "inputVolume2": null,
        "operation": 0,
        "extend": 3,
        "edge": 3,
        "doInvert": false,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "inputVolume": "21200.outputVolume"
    },
    {
        "object.className": "ProtRelionPostprocess",
        "object.id": "21400",
        "object.label": "relion - post-processing",
        "object.comment": "Auto B-factor sharpening and FSC calculation with mask",
        "_useQueue": true,
        "_prerequisites": "21300",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "relionInput": true,
        "inputType": 0,
        "inputVolume": null,
        "inputHalf1": null,
        "inputHalf2": null,
        "bodyNum": 1,
        "calibratedPixelSize": 0.0,
        "mtf": null,
        "origPixelSize": -1.0,
        "doAutoBfactor": true,
        "bfactorLowRes": 10.0,
        "bfactorHighRes": 0.0,
        "bfactor": -350.0,
        "skipFscWeighting": false,
        "lowRes": 5.0,
        "filterEdgeWidth": 2,
        "randomizeAtFsc": 0.8,
        "forceMask": false,
        "hostName": "localhost",
        "protRefine": "21200",
        "solventMask": "21300.outputMask"
    }
]
