[
    {
        "object.className": "ProtImportMovies",
        "object.id": "22000",
        "object.label": "pwem - import movies",
        "object.comment": "Import EMPIAR-10248 apoferritin movies for Relion-centric workflow",
        "_useQueue": true,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "importFrom": 0,
        "filesPath": "/projects/EMPIAR/",
        "filesPattern": "*.tiff",
        "copyFiles": false,
        "haveDataBeenPhaseFlipped": false,
        "acquisitionWizard": null,
        "voltage": 300.0,
        "sphericalAberration": 2.7,
        "amplitudeContrast": 0.1,
        "magnification": 50000,
        "samplingRateMode": 0,
        "samplingRate": 0.495,
        "scannedPixelSize": 7.0,
        "doseInitial": 0.0,
        "dosePerFrame": null,
        "gainFile": "/projects/EMPIAR/gain.mrc",
        "darkFile": null,
        "dataStreaming": false,
        "timeout": 43200,
        "fileTimeout": 30,
        "blacklistDateFrom": null,
        "blacklistDateTo": null,
        "useRegexps": true,
        "blacklistFile": null,
        "inputIndividualFrames": false,
        "numberOfIndividualFrames": null,
        "stackFrames": false,
        "writeMoviesInProject": false,
        "movieSuffix": "_frames.mrcs",
        "deleteFrames": false
    },
    {
        "object.className": "XmippProtMovieGain",
        "object.id": "22100",
        "object.label": "xmipp3 - movie gain",
        "object.comment": "Gain reference estimation",
        "_useQueue": true,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "frameStep": 5,
        "movieStep": 250,
        "estimateOrientation": true,
        "normalizeGain": true,
        "useExistingGainImage": true,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "numberOfMpi": 1,
        "inputMovies": "22000.outputMovies"
    },
    {
        "object.className": "XmippProtFlexAlign",
        "object.id": "22200",
        "object.label": "xmipp3 - FlexAlign motion correction",
        "object.comment": "Global motion correction (CPU mode)",
        "_useQueue": true,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "alignFrame0": 1,
        "alignFrameN": 0,
        "useAlignToSum": true,
        "sumFrame0": 1,
        "sumFrameN": 0,
        "binFactor": 1.0,
        "cropOffsetX": 0,
        "cropOffsetY": 0,
        "cropDimX": 0,
        "cropDimY": 0,
        "doSaveAveMic": true,
        "doSaveMovie": false,
        "splineOrder": 1,
        "useGpu": false,
        "gpuList": "0",
        "maxResForCorrelation": 30.0,
        "doComputePSD": true,
        "maxShift": 30,
        "outsideMode": 0,
        "doLocalAlignment": false,
        "autoControlPoints": true,
        "minLocalRes": 500.0,
        "skipAutotuning": false,
        "controlPointX": 9,
        "controlPointY": 9,
        "controlPointT": 10,
        "groupNFrames": 3,
        "outsideValue": 0.0,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 1,
        "inputMovies": "22100.outputMovies"
    },
    {
        "object.className": "XmippProtMovieMaxShift",
        "object.id": "22300",
        "object.label": "xmipp3 - movie maxshift",
        "object.comment": "Filter movies by shift quality",
        "_useQueue": true,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "maxFrameShift": 500.0,
        "maxMovieShift": 500.0,
        "rejType": 0,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 1,
        "inputMovies": "22200.outputMovies"
    },
    {
        "object.className": "CistemProtCTFFind",
        "object.id": "22400",
        "object.label": "cistem - ctffind4",
        "object.comment": "CTF estimation with CTFFind4",
        "_useQueue": true,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "recalculate": false,
        "sqliteFile": null,
        "inputType": 1,
        "lowRes": 30.0,
        "highRes": 5.0,
        "minDefocus": 5000.0,
        "maxDefocus": 50000.0,
        "stepDefocus": 100.0,
        "windowSize": 512,
        "slowSearch": false,
        "astigmatism": 100.0,
        "fixAstig": true,
        "findPhaseShift": false,
        "minPhaseShift": 0.0,
        "maxPhaseShift": 180.0,
        "stepPhaseShift": 10.0,
        "numberOfThreads": 4,
        "numberOfMpi": 1,
        "inputMicrographs": "22300.outputMicrographs",
        "hostName": "localhost",
        "streamingBatchSize": 1,
        "streamingSleepOnWait": 0
    },
    {
        "object.className": "ProtRelionAutopickLoG",
        "object.id": "22500",
        "object.label": "relion - auto-picking LoG",
        "object.comment": "Laplacian-of-Gaussian automatic particle picking",
        "_useQueue": true,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "boxSize": 300,
        "minDiameter": 80,
        "maxDiameter": 180,
        "areParticlesWhite": false,
        "maxResolution": 20.0,
        "threshold": 0.0,
        "threshold2": 999.0,
        "extraParams": "",
        "streamingWarning": null,
        "streamingSleepOnWait": 0,
        "streamingBatchSize": 0,
        "hostName": "localhost",
        "numberOfMpi": 1,
        "inputMicrographs": "22300.outputMicrographs"
    },
    {
        "object.className": "ProtRelionExtractParticles",
        "object.id": "22600",
        "object.label": "relion - extract particles",
        "object.comment": "Extract particles using Relion (alternative to Xmipp extraction)",
        "_useQueue": true,
        "_prerequisites": "22400",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "downsampleType": 0,
        "inputMicrographs": null,
        "boxSize": 300,
        "doRescale": true,
        "rescaledSize": 128,
        "saveFloat16": true,
        "doInvert": true,
        "doNormalize": true,
        "backDiameter": -1,
        "stddevWhiteDust": -1.0,
        "stddevBlackDust": -1.0,
        "streamingWarning": null,
        "streamingSleepOnWait": 0,
        "streamingBatchSize": 1,
        "hostName": "localhost",
        "numberOfMpi": 1,
        "inputCoordinates": "22500.outputCoordinates",
        "ctfRelations": "22400.outputCTF"
    },
    {
        "object.className": "ProtRelionPreprocessParticles",
        "object.id": "22700",
        "object.label": "relion - preprocess particles",
        "object.comment": "Normalize and clean extracted particles",
        "_useQueue": true,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "doNormalize": true,
        "backRadius": -1,
        "doRemoveDust": true,
        "whiteDust": 5.0,
        "blackDust": 5.0,
        "doInvert": false,
        "doScale": false,
        "scaleSize": 0,
        "doWindow": false,
        "windowSize": 0,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "numberOfMpi": 1,
        "inputParticles": "22600.outputParticles"
    },
    {
        "object.className": "ProtRelionClassify2D",
        "object.id": "22800",
        "object.label": "relion - 2D classification",
        "object.comment": "2D class averaging for particle curation",
        "_useQueue": true,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "isClassify": true,
        "is2D": true,
        "doContinue": false,
        "copyAlignment": false,
        "alignmentAsPriors": false,
        "fillRandomSubset": true,
        "maskDiameterA": 120,
        "maskZero": 0,
        "continueIter": "last",
        "continueMsg": "True",
        "doCTF": true,
        "haveDataBeenPhaseFlipped": null,
        "ignoreCTFUntilFirstPeak": false,
        "doCtfManualGroups": false,
        "defocusRange": 1000.0,
        "numParticles": 10.0,
        "numberOfClasses": 10,
        "regularisationParamT": 2.0,
        "numberOfIterations": 15,
        "limitResolEStep": -1.0,
        "doImageAlignment": true,
        "inplaneAngularSamplingDeg": 6.0,
        "offsetSearchRangePix": 5.0,
        "offsetSearchStepPix": 1.0,
        "useGradientAlg": true,
        "numberOfVDAMBatches": 100,
        "centerAvg": true,
        "useParallelDisk": true,
        "pooledParticles": 3,
        "allParticlesRam": true,
        "scratchDir": null,
        "combineItersDisc": false,
        "doGpu": false,
        "gpusToUse": "",
        "oversampling": 1,
        "extraParams": "",
        "hostName": "localhost",
        "numberOfThreads": 4,
        "numberOfMpi": 1,
        "inputParticles": "22700.outputParticles"
    },
    {
        "object.className": "ProtRelionInitialModel",
        "object.id": "22900",
        "object.label": "relion - 3D initial model",
        "object.comment": "Ab-initio 3D initial model using SGD",
        "_useQueue": true,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "doContinue": false,
        "doCTF": true,
        "haveDataBeenPhaseFlipped": null,
        "ignoreCTFUntilFirstPeak": false,
        "doCtfManualGroups": false,
        "defocusRange": 1000.0,
        "numParticles": 10.0,
        "numberOfClasses": 1,
        "regularisationParamT": 4.0,
        "numberOfIter": 50,
        "maskDiameterA": 120,
        "symmetryGroup": "O",
        "doGpu": false,
        "gpusToUse": "",
        "allParticlesRam": true,
        "scratchDir": null,
        "combineItersDisc": false,
        "useParallelDisk": true,
        "pooledParticles": 3,
        "doFlattenSolvent": true,
        "runInC1": true,
        "extraParams": "",
        "hostName": "localhost",
        "numberOfThreads": 4,
        "numberOfMpi": 1,
        "inputParticles": "22700.outputParticles"
    },
    {
        "object.className": "ProtRelionReconstruct",
        "object.id": "23000",
        "object.label": "relion - reconstruct",
        "object.comment": "Direct 3D reconstruction from particle stack",
        "_useQueue": true,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "symmetryGroup": "O",
        "maxRes": -1.0,
        "pad": 2.0,
        "subset": 0,
        "classNum": -1,
        "extraParams": "",
        "doCTF": true,
        "ctfIntactFirstPeak": false,
        "doEwald": false,
        "skipMask": false,
        "maskDiameterA": 120,
        "edge": 3,
        "reverseCurvature": false,
        "newBoxSize": -1,
        "numSectors": 2,
        "skipWeight": false,
        "hostName": "localhost",
        "numberOfMpi": 1,
        "inputParticles": "22700.outputParticles"
    }
]
