[
    {
        "object.className": "ProtImportMovies",
        "object.id": "26000",
        "object.label": "pwem - import movies",
        "object.comment": "Import EMPIAR-10248 movies for volume analysis workflow",
        "_useQueue": true,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "importFrom": 0,
        "filesPath": "/projects/EMPIAR/",
        "filesPattern": "*.tiff",
        "copyFiles": false,
        "haveDataBeenPhaseFlipped": false,
        "acquisitionWizard": null,
        "voltage": 300.0,
        "sphericalAberration": 2.7,
        "amplitudeContrast": 0.1,
        "magnification": 50000,
        "samplingRateMode": 0,
        "samplingRate": 0.495,
        "scannedPixelSize": 7.0,
        "doseInitial": 0.0,
        "dosePerFrame": null,
        "gainFile": "/projects/EMPIAR/gain.mrc",
        "darkFile": null,
        "dataStreaming": false,
        "timeout": 43200,
        "fileTimeout": 30,
        "blacklistDateFrom": null,
        "blacklistDateTo": null,
        "useRegexps": true,
        "blacklistFile": null,
        "inputIndividualFrames": false,
        "numberOfIndividualFrames": null,
        "stackFrames": false,
        "writeMoviesInProject": false,
        "movieSuffix": "_frames.mrcs",
        "deleteFrames": false
    },
    {
        "object.className": "XmippProtMovieGain",
        "object.id": "26100",
        "object.label": "xmipp3 - movie gain",
        "object.comment": "Gain reference estimation",
        "_useQueue": true,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "frameStep": 5,
        "movieStep": 250,
        "estimateOrientation": true,
        "normalizeGain": true,
        "useExistingGainImage": true,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "numberOfMpi": 1,
        "inputMovies": "26000.outputMovies"
    },
    {
        "object.className": "XmippProtFlexAlign",
        "object.id": "26200",
        "object.label": "xmipp3 - FlexAlign motion correction",
        "object.comment": "Global motion correction (CPU mode)",
        "_useQueue": true,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "alignFrame0": 1,
        "alignFrameN": 0,
        "useAlignToSum": true,
        "sumFrame0": 1,
        "sumFrameN": 0,
        "binFactor": 1.0,
        "cropOffsetX": 0,
        "cropOffsetY": 0,
        "cropDimX": 0,
        "cropDimY": 0,
        "doSaveAveMic": true,
        "doSaveMovie": false,
        "splineOrder": 1,
        "useGpu": false,
        "gpuList": "0",
        "maxResForCorrelation": 30.0,
        "doComputePSD": true,
        "maxShift": 30,
        "outsideMode": 0,
        "doLocalAlignment": false,
        "autoControlPoints": true,
        "minLocalRes": 500.0,
        "skipAutotuning": false,
        "controlPointX": 9,
        "controlPointY": 9,
        "controlPointT": 10,
        "groupNFrames": 3,
        "outsideValue": 0.0,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 1,
        "inputMovies": "26100.outputMovies"
    },
    {
        "object.className": "XmippProtMovieMaxShift",
        "object.id": "26300",
        "object.label": "xmipp3 - movie maxshift",
        "object.comment": "Filter movies by shift quality",
        "_useQueue": true,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "maxFrameShift": 500.0,
        "maxMovieShift": 500.0,
        "rejType": 0,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 1,
        "inputMovies": "26200.outputMovies"
    },
    {
        "object.className": "CistemProtCTFFind",
        "object.id": "26400",
        "object.label": "cistem - ctffind4",
        "object.comment": "CTF estimation with CTFFind4",
        "_useQueue": true,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "recalculate": false,
        "sqliteFile": null,
        "inputType": 1,
        "lowRes": 30.0,
        "highRes": 5.0,
        "minDefocus": 5000.0,
        "maxDefocus": 50000.0,
        "stepDefocus": 100.0,
        "windowSize": 512,
        "slowSearch": false,
        "astigmatism": 100.0,
        "fixAstig": true,
        "findPhaseShift": false,
        "minPhaseShift": 0.0,
        "maxPhaseShift": 180.0,
        "stepPhaseShift": 10.0,
        "numberOfThreads": 4,
        "numberOfMpi": 1,
        "inputMicrographs": "26300.outputMicrographs",
        "hostName": "localhost",
        "streamingBatchSize": 1,
        "streamingSleepOnWait": 0
    },
    {
        "object.className": "XmippProtCTFMicrographs",
        "object.id": "26500",
        "object.label": "xmipp3 - ctf estimation",
        "object.comment": "CTF estimation using Xmipp (second estimator)",
        "_useQueue": true,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "recalculate": false,
        "sqliteFile": null,
        "AutoDownsampling": false,
        "ctfDownFactor": 2.0,
        "doInitialCTF": false,
        "doOptimizeDefocus": false,
        "findPhaseShift": false,
        "doCTFAutoDownsampling": true,
        "refineAmplitudeContrast": false,
        "skipBorders": false,
        "lowRes": 0.05,
        "highRes": 0.5,
        "minDefocus": 0.25,
        "maxDefocus": 4.0,
        "windowSize": 512,
        "hostName": "localhost",
        "numberOfThreads": 6,
        "numberOfMpi": 1,
        "inputMicrographs": "26300.outputMicrographs"
    },
    {
        "object.className": "XmippProtCTFConsensus",
        "object.id": "26600",
        "object.label": "xmipp3 - ctf consensus",
        "object.comment": "Cross-validate CTF estimates",
        "_useQueue": true,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "useDefocus": true,
        "minDefocus": 4000.0,
        "maxDefocus": 40000.0,
        "useAstigmatism": true,
        "astigmatism": 1000.0,
        "useResolution": true,
        "resolution": 7.0,
        "useCritXmipp": true,
        "critFirstZero": 5.0,
        "minCritFirstZeroRatio": 0.9,
        "maxCritFirstZeroRatio": 1.1,
        "critCorr": 0.05,
        "critCtfMargin": 1.5,
        "critIceness": 1.05,
        "minCritNonAstigmaticValidity": 0.3,
        "maxCritNonAstigmaticValidity": 9.0,
        "calculateConsensus": true,
        "minConsResol": 7.0,
        "averageDefocus": true,
        "includeSecondary": true,
        "hostName": "localhost",
        "inputCTF": "26400.outputCTF",
        "inputCTF2": "26500.outputCTF"
    },
    {
        "object.className": "ProtRelionAutopickLoG",
        "object.id": "26700",
        "object.label": "relion - auto-picking LoG",
        "object.comment": "Laplacian-of-Gaussian automatic particle picking",
        "_useQueue": true,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "boxSize": 300,
        "minDiameter": 80,
        "maxDiameter": 180,
        "areParticlesWhite": false,
        "maxResolution": 20.0,
        "threshold": 0.0,
        "threshold2": 999.0,
        "extraParams": "",
        "streamingWarning": null,
        "streamingSleepOnWait": 0,
        "streamingBatchSize": 0,
        "hostName": "localhost",
        "numberOfMpi": 1,
        "inputMicrographs": "26600.outputMicrographs"
    },
    {
        "object.className": "XmippProtExtractParticles",
        "object.id": "26800",
        "object.label": "xmipp3 - extract particles",
        "object.comment": "Extract particle images from micrographs",
        "_useQueue": true,
        "_prerequisites": "26600",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "downsampleType": 0,
        "downFactor": 2.0,
        "boxSize": 300,
        "doBorders": false,
        "doRemoveDust": true,
        "thresholdDust": 5.0,
        "doInvert": true,
        "doFlip": false,
        "doNormalize": true,
        "normType": 2,
        "backRadius": -1,
        "patchSize": -1,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "numberOfMpi": 1,
        "inputCoordinates": "26700.outputCoordinates",
        "ctfRelations": "26600.outputCTF"
    },
    {
        "object.className": "ProtRelionClassify2D",
        "object.id": "26900",
        "object.label": "relion - 2D classification",
        "object.comment": "2D class averaging for particle curation",
        "_useQueue": true,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "isClassify": true,
        "is2D": true,
        "doContinue": false,
        "copyAlignment": false,
        "alignmentAsPriors": false,
        "fillRandomSubset": true,
        "maskDiameterA": 120,
        "maskZero": 0,
        "continueIter": "last",
        "continueMsg": "True",
        "doCTF": true,
        "haveDataBeenPhaseFlipped": null,
        "ignoreCTFUntilFirstPeak": false,
        "doCtfManualGroups": false,
        "defocusRange": 1000.0,
        "numParticles": 10.0,
        "numberOfClasses": 10,
        "regularisationParamT": 2.0,
        "numberOfIterations": 15,
        "limitResolEStep": -1.0,
        "doImageAlignment": true,
        "inplaneAngularSamplingDeg": 6.0,
        "offsetSearchRangePix": 5.0,
        "offsetSearchStepPix": 1.0,
        "useGradientAlg": true,
        "numberOfVDAMBatches": 100,
        "centerAvg": true,
        "useParallelDisk": true,
        "pooledParticles": 3,
        "allParticlesRam": true,
        "scratchDir": null,
        "combineItersDisc": false,
        "doGpu": false,
        "gpusToUse": "",
        "oversampling": 1,
        "extraParams": "",
        "hostName": "localhost",
        "numberOfThreads": 4,
        "numberOfMpi": 1,
        "inputParticles": "26800.outputParticles"
    },
    {
        "object.className": "ProtRelionInitialModel",
        "object.id": "27000",
        "object.label": "relion - 3D initial model",
        "object.comment": "Ab-initio 3D initial model using SGD",
        "_useQueue": true,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "doContinue": false,
        "doCTF": true,
        "haveDataBeenPhaseFlipped": null,
        "ignoreCTFUntilFirstPeak": false,
        "doCtfManualGroups": false,
        "defocusRange": 1000.0,
        "numParticles": 10.0,
        "numberOfClasses": 1,
        "regularisationParamT": 4.0,
        "numberOfIter": 50,
        "maskDiameterA": 120,
        "symmetryGroup": "O",
        "doGpu": false,
        "gpusToUse": "",
        "allParticlesRam": true,
        "scratchDir": null,
        "combineItersDisc": false,
        "useParallelDisk": true,
        "pooledParticles": 3,
        "doFlattenSolvent": true,
        "runInC1": true,
        "extraParams": "",
        "hostName": "localhost",
        "numberOfThreads": 4,
        "numberOfMpi": 1,
        "inputParticles": "26800.outputParticles"
    },
    {
        "object.className": "XmippProtCreateMask3D",
        "object.id": "27100",
        "object.label": "xmipp3 - create 3D mask",
        "object.comment": "Create binary mask from initial volume using Otsu thresholding",
        "_useQueue": true,
        "_prerequisites": "27000",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "source": 0,
        "volumeOperation": 0,
        "threshold": 0.0,
        "segmentationType": 2,
        "nvoxels": null,
        "naminoacids": null,
        "dalton": null,
        "samplingRate": 1.0,
        "size": null,
        "geo": 0,
        "radius": -1,
        "shiftCenter": false,
        "centerX": 0,
        "centerY": 0,
        "centerZ": 0,
        "boxSize": -1,
        "innerRadius": 0,
        "outerRadius": -1,
        "height": -1,
        "sigma": -1.0,
        "borderDecay": 0,
        "featureFilePath": null,
        "doSmall": false,
        "smallSize": 50,
        "doBig": false,
        "doSymmetrize": false,
        "symmetry": "c1",
        "doMorphological": false,
        "morphologicalOperation": 0,
        "elementSize": 1,
        "doInvert": false,
        "doSmooth": true,
        "sigmaConvolution": 2.0,
        "hostName": "localhost",
        "inputVolume": "27000.outputVolume"
    },
    {
        "object.className": "XmippProtCropResizeVolumes",
        "object.id": "27200",
        "object.label": "xmipp3 - crop/resize volume",
        "object.comment": "Resize initial model volume (downscale for faster analysis)",
        "_useQueue": true,
        "_prerequisites": "27000",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "doResize": true,
        "resizeOption": 2,
        "resizeSamplingRate": 1.0,
        "doFourier": false,
        "resizeDim": 0,
        "resizeFactor": 0.5,
        "resizeLevel": 0,
        "hugeFile": false,
        "doWindow": false,
        "windowOperation": 1,
        "cropSize": 0,
        "windowSize": 0,
        "hostName": "localhost",
        "numberOfThreads": 2,
        "numberOfMpi": 1,
        "inputVolumes": "27000.outputVolume"
    },
    {
        "object.className": "XmippProtMonoRes",
        "object.id": "27300",
        "object.label": "xmipp3 - MonoRes local resolution",
        "object.comment": "Estimate local resolution of the reconstructed volume",
        "_useQueue": true,
        "_prerequisites": "27100",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "useHalfVolumes": false,
        "hasHalfVolumesFile": true,
        "associatedHalves": null,
        "halfMap1": null,
        "halfMap2": null,
        "maskExcl": null,
        "significance": 0.95,
        "maskThreshold": 0.5,
        "noiseOnlyInHalves": true,
        "gaussianNoise": false,
        "minRes": 0.0,
        "maxRes": null,
        "stepSize": null,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "fullMap": "27000.outputVolume",
        "mask": "27100.outputMask"
    },
    {
        "object.className": "XmippProtLocSharp",
        "object.id": "27400",
        "object.label": "xmipp3 - local sharpening (LocalDeblur)",
        "object.comment": "Locally sharpen volume using MonoRes resolution map",
        "_useQueue": true,
        "_prerequisites": "27300",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "const": 1.0,
        "K": 0.025,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "inputVolume": "27000.outputVolume",
        "resolutionVolume": "27300.outputResolutionChimera"
    }
]
