[
    {
        "object.className": "ProtCryoSparcRefine3D",
        "object.id": "8940",
        "object.label": "cryosparc2 - 3D homogeneous refinement",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 1,
        "refine_N": 0,
        "symmetryGroup": 3,
        "symmetryOrder": 1,
        "refine_symmetry_do_align": true,
        "refine_do_init_scale_est": true,
        "refine_num_final_iterations": 0,
        "refine_res_init": 30,
        "refine_res_gsfsc_split": 20,
        "refine_SPW": false,
        "refine_clip": false,
        "refine_window": true,
        "refine_skip_premult": true,
        "refine_ignore_dc": true,
        "refine_batchsize_init": 0,
        "refine_batchsize_epsilon": 0.001,
        "refine_batchsize_snrfactor": 40.0,
        "refine_scale_min": false,
        "refine_scale_align_use_prev": false,
        "refine_scale_ctf_use_current": false,
        "refine_scale_start_iter": 0,
        "refine_noise_model": 0,
        "refine_noise_priorw": 50,
        "refine_noise_initw": 200,
        "refine_noise_init_sigmascale": 3,
        "refine_minisize": 2000,
        "refine_mask": 0,
        "refine_dynamic_mask_thresh_factor": 0.2,
        "refine_dynamic_mask_near_ang": 6.0,
        "refine_dynamic_mask_far_ang": 14.0,
        "refine_dynamic_mask_start_res": 12,
        "refine_dynamic_mask_use_abs": false,
        "compute_use_ssd": false,
        "gpuList": "0",
        "compute_lane": "default"
    },
    {
        "object.className": "ProtRelionClassify3D",
        "object.id": "9046",
        "object.label": "relion - 3D classification 1",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "isClassify": true,
        "is2D": false,
        "doContinue": false,
        "copyAlignment": false,
        "alignmentAsPriors": false,
        "fillRandomSubset": false,
        "maskDiameterA": -1,
        "maskZero": 0,
        "continueIter": "last",
        "solventFscMask": false,
        "isMapAbsoluteGreyScale": false,
        "symmetryGroup": "o",
        "initialLowPassFilterA": 15.0,
        "continueMsg": "True",
        "doCTF": true,
        "hasReferenceCTFCorrected": false,
        "haveDataBeenPhaseFlipped": null,
        "ignoreCTFUntilFirstPeak": false,
        "doCtfManualGroups": false,
        "defocusRange": 1000.0,
        "numParticles": 10.0,
        "numberOfClasses": 2,
        "regularisationParamT": 4,
        "numberOfIterations": 25,
        "useFastSubsets": false,
        "limitResolEStep": -1.0,
        "doImageAlignment": true,
        "angularSamplingDeg": 2,
        "offsetSearchRangePix": 5.0,
        "offsetSearchStepPix": 1.0,
        "localAngularSearch": false,
        "localAngularSearchRange": 5.0,
        "allowCoarserSampling": false,
        "useParallelDisk": true,
        "pooledParticles": 3,
        "skipPadding": false,
        "allParticlesRam": false,
        "scratchDir": null,
        "combineItersDisc": false,
        "doGpu": true,
        "gpusToUse": "",
        "oversampling": 1,
        "extraParams": "",
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 3,
        "inputParticles": "8940.outputParticles",
        "referenceVolume": "8940.outputVolume"
    },
    {
        "object.className": "ProtRelionClassify3D",
        "object.id": "9154",
        "object.label": "relion - 3D classification 2",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "isClassify": true,
        "is2D": false,
        "doContinue": false,
        "copyAlignment": false,
        "alignmentAsPriors": false,
        "fillRandomSubset": false,
        "maskDiameterA": -1,
        "maskZero": 0,
        "continueIter": "last",
        "solventFscMask": false,
        "isMapAbsoluteGreyScale": false,
        "symmetryGroup": "o",
        "initialLowPassFilterA": 15.0,
        "continueMsg": "True",
        "doCTF": true,
        "hasReferenceCTFCorrected": false,
        "haveDataBeenPhaseFlipped": null,
        "ignoreCTFUntilFirstPeak": false,
        "doCtfManualGroups": false,
        "defocusRange": 1000.0,
        "numParticles": 10.0,
        "numberOfClasses": 2,
        "regularisationParamT": 4,
        "numberOfIterations": 25,
        "useFastSubsets": false,
        "limitResolEStep": -1.0,
        "doImageAlignment": true,
        "angularSamplingDeg": 2,
        "offsetSearchRangePix": 5.0,
        "offsetSearchStepPix": 1.0,
        "localAngularSearch": false,
        "localAngularSearchRange": 5.0,
        "allowCoarserSampling": false,
        "useParallelDisk": true,
        "pooledParticles": 3,
        "skipPadding": false,
        "allParticlesRam": false,
        "scratchDir": null,
        "combineItersDisc": false,
        "doGpu": true,
        "gpusToUse": "",
        "oversampling": 1,
        "extraParams": "",
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 3,
        "inputParticles": "8940.outputParticles",
        "referenceVolume": "8940.outputVolume"
    },
    {
        "object.className": "XmippProtConsensusClasses3D",
        "object.id": "9262",
        "object.label": "xmipp3 - consensus classes 3D",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "inputMultiClasses": [
            "9154.outputClasses",
            "9046.outputClasses"
        ]
    },
    {
        "object.className": "ProtUserSubSet",
        "object.id": "9302",
        "object.label": "goodParticles",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "other": null,
        "sqliteFile": "Runs/009262_XmippProtConsensusClasses3D/classes3D_state.sqlite,",
        "outputClassName": "SetOfParticles",
        "inputObject": "9262.outputClasses"
    },
    {
        "object.className": "ProtCryoSparcRefine3D",
        "object.id": "9355",
        "object.label": "cryosparc2 - 3D homogeneous refinement",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 1,
        "refine_N": 0,
        "symmetryGroup": 3,
        "symmetryOrder": 1,
        "refine_symmetry_do_align": true,
        "refine_do_init_scale_est": true,
        "refine_num_final_iterations": 0,
        "refine_res_init": 30,
        "refine_res_gsfsc_split": 20,
        "refine_SPW": false,
        "refine_clip": false,
        "refine_window": true,
        "refine_skip_premult": true,
        "refine_ignore_dc": true,
        "refine_batchsize_init": 0,
        "refine_batchsize_epsilon": 0.001,
        "refine_batchsize_snrfactor": 40.0,
        "refine_scale_min": false,
        "refine_scale_align_use_prev": false,
        "refine_scale_ctf_use_current": false,
        "refine_scale_start_iter": 0,
        "refine_noise_model": 0,
        "refine_noise_priorw": 50,
        "refine_noise_initw": 200,
        "refine_noise_init_sigmascale": 3,
        "refine_minisize": 2000,
        "refine_mask": 0,
        "refine_dynamic_mask_thresh_factor": 0.2,
        "refine_dynamic_mask_near_ang": 6.0,
        "refine_dynamic_mask_far_ang": 14.0,
        "refine_dynamic_mask_start_res": 12,
        "refine_dynamic_mask_use_abs": false,
        "compute_use_ssd": false,
        "gpuList": "0",
        "compute_lane": "default",
        "referenceVolume": "8940.outputVolume",
        "inputParticles": "9302.outputParticles"
    },
    {
        "object.className": "ProtRelionRefine3D",
        "object.id": "9461",
        "object.label": "relion - 3D auto-refine",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "isClassify": false,
        "is2D": false,
        "doContinue": false,
        "copyAlignment": false,
        "alignmentAsPriors": false,
        "fillRandomSubset": false,
        "maskDiameterA": -1,
        "maskZero": 0,
        "continueIter": "last",
        "solventFscMask": false,
        "isMapAbsoluteGreyScale": false,
        "symmetryGroup": "o",
        "initialLowPassFilterA": 10.0,
        "continueMsg": "True",
        "doCTF": true,
        "hasReferenceCTFCorrected": false,
        "haveDataBeenPhaseFlipped": null,
        "ignoreCTFUntilFirstPeak": false,
        "doCtfManualGroups": false,
        "defocusRange": 1000.0,
        "numParticles": 10.0,
        "doImageAlignment": true,
        "angularSamplingDeg": 2,
        "offsetSearchRangePix": 5.0,
        "offsetSearchStepPix": 1.0,
        "localSearchAutoSamplingDeg": 4,
        "useFinerSamplingFaster": false,
        "useParallelDisk": true,
        "pooledParticles": 3,
        "skipPadding": false,
        "allParticlesRam": false,
        "scratchDir": null,
        "combineItersDisc": false,
        "doGpu": true,
        "gpusToUse": "",
        "oversampling": 1,
        "extraParams": "",
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 3,
        "referenceVolume": "8940.outputVolume",
        "inputParticles": "9302.outputParticles"
    },
    {
        "object.className": "XmippProtCompareAngles",
        "object.id": "9567",
        "object.label": "xmipp3 - compare angles",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "symmetryGroup": "o",
        "inputParticles2": "9355.outputParticles",
        "inputParticles1": "9461.outputParticles"
    },
    {
        "object.className": "ProtUserSubSet",
        "object.id": "9620",
        "object.label": "subset <2 degrees, <1 pixel",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "other": null,
        "sqliteFile": "Runs/009567_XmippProtCompareAngles/particles_state.sqlite,",
        "outputClassName": "SetOfParticles",
        "inputObject": "9567.outputParticles"
    },
    {
        "object.className": "XmippProtReconstructHighRes",
        "object.id": "9673",
        "object.label": "xmipp3 - highres angles&shifts",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "useGpu": true,
        "gpuList": "0",
        "doContinue": false,
        "particleRadius": 76,
        "symmetryGroup": "o",
        "saveSpace": true,
        "nextLowPass": true,
        "nextResolutionCriterion": 0.5,
        "nextResolutionOffset": 2.0,
        "nextSpherical": true,
        "nextPositivity": true,
        "nextDropout": 0.0,
        "nextReferenceScript": "",
        "nextRemove": true,
        "splitMethod": 1,
        "multiresolution": true,
        "angularMaxShift": 10.0,
        "angularMinTilt": 0.0,
        "angularMaxTilt": 180.0,
        "alignmentMethod": 1,
        "numberOfIterations": 1,
        "NimgsSGD": 250,
        "alphaSGD": 0.1,
        "restrictReconstructionAngles": false,
        "angularMinTiltReconstruct": 88.0,
        "angularMaxTiltReconstruct": 92.0,
        "maximumTargetResolution": "2",
        "numberOfPerturbations": 1,
        "numberOfReplicates": 1,
        "contShift": true,
        "contMaxShiftVariation": 2.0,
        "contScale": false,
        "contMaxScale": 0.02,
        "contAngles": true,
        "contGrayValues": false,
        "contMaxGrayScale": 0.5,
        "contMaxGrayShift": 3.0,
        "contDefocus": false,
        "contMaxDefocus": 200.0,
        "contPadding": 2,
        "weightSSNR": false,
        "weightContinuous": false,
        "weightJumper": false,
        "weightCC": true,
        "weightCCmin": 0.1,
        "postSymmetryWithinMask": false,
        "postSymmetryWithinMaskType": "i1",
        "postSymmetryHelical": false,
        "postSymmetryHelicalRadius": -1,
        "postSymmetryHelicalDihedral": false,
        "postSymmetryHelicalMinRot": 0.0,
        "postSymmetryHelicalMaxRot": 360.0,
        "postSymmetryHelicalMinZ": 0.0,
        "postSymmetryHelicalMaxZ": 40.0,
        "postScript": "",
        "postSignificantDenoise": true,
        "postFilterBank": true,
        "postLaplacian": true,
        "postDeconvolve": true,
        "postSoftNeg": true,
        "postSoftNegK": 9.0,
        "postDifference": true,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 8,
        "inputVolumes": "8940.outputVolume",
        "inputParticles": "9620.outputParticles"
    },
    {
        "object.className": "XmippProtMultiRefAlignability",
        "object.id": "10312",
        "object.label": "xmipp3 - multireference alignability",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "useGpu": true,
        "gpuList": "0",
        "symmetryGroup": "o",
        "angularSampling": 5.0,
        "numOrientations": 7.0,
        "doNotUseWeights": false,
        "pseudoSymmetryGroup": "",
        "minTilt": 0.0,
        "maxTilt": 180.0,
        "doWiener": true,
        "isIsotropic": true,
        "padding_factor": 2,
        "wiener_constant": -1.0,
        "correctEnvelope": false,
        "targetResolution": 8.0,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 1,
        "inputVolumes": "9673.outputVolume",
        "inputParticles": "9673.outputParticles"
    },
    {
        "object.className": "ProtUserSubSet",
        "object.id": "10397",
        "object.label": "wellAligned",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "other": null,
        "sqliteFile": "Runs/010312_XmippProtMultiRefAlignability/particlesvol001__state.sqlite,",
        "outputClassName": "SetOfParticles",
        "inputObject": "10312.outputParticles"
    },
    {
        "object.className": "XmippProtReconstructHighRes",
        "object.id": "10450",
        "object.label": "xmipp3 - highres angles&shifts 2",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "useGpu": true,
        "gpuList": "0",
        "doContinue": false,
        "particleRadius": 76,
        "symmetryGroup": "o",
        "saveSpace": true,
        "nextLowPass": true,
        "nextResolutionCriterion": 0.5,
        "nextResolutionOffset": 2.0,
        "nextSpherical": true,
        "nextPositivity": true,
        "nextDropout": 0.0,
        "nextReferenceScript": "",
        "nextRemove": true,
        "splitMethod": 1,
        "multiresolution": true,
        "angularMaxShift": 10.0,
        "angularMinTilt": 0.0,
        "angularMaxTilt": 180.0,
        "alignmentMethod": 1,
        "numberOfIterations": 1,
        "NimgsSGD": 250,
        "alphaSGD": 0.1,
        "restrictReconstructionAngles": false,
        "angularMinTiltReconstruct": 88.0,
        "angularMaxTiltReconstruct": 92.0,
        "maximumTargetResolution": "2",
        "numberOfPerturbations": 1,
        "numberOfReplicates": 1,
        "contShift": true,
        "contMaxShiftVariation": 2.0,
        "contScale": false,
        "contMaxScale": 0.02,
        "contAngles": true,
        "contGrayValues": false,
        "contMaxGrayScale": 0.5,
        "contMaxGrayShift": 3.0,
        "contDefocus": false,
        "contMaxDefocus": 200.0,
        "contPadding": 2,
        "weightSSNR": false,
        "weightContinuous": false,
        "weightJumper": false,
        "weightCC": true,
        "weightCCmin": 0.1,
        "postSymmetryWithinMask": false,
        "postSymmetryWithinMaskType": "i1",
        "postSymmetryHelical": false,
        "postSymmetryHelicalRadius": -1,
        "postSymmetryHelicalDihedral": false,
        "postSymmetryHelicalMinRot": 0.0,
        "postSymmetryHelicalMaxRot": 360.0,
        "postSymmetryHelicalMinZ": 0.0,
        "postSymmetryHelicalMaxZ": 40.0,
        "postScript": "",
        "postSignificantDenoise": true,
        "postFilterBank": true,
        "postLaplacian": true,
        "postDeconvolve": true,
        "postSoftNeg": true,
        "postSoftNegK": 9.0,
        "postDifference": true,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 4,
        "inputVolumes": "9673.outputVolume",
        "inputParticles": "10397.outputParticles"
    }
]