[
    {
        "object.className": "ProtRelionAutopickLoG",
        "object.id": "7076",
        "object.label": "relion - auto-picking LoG",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "boxSize": 300,
        "minDiameter": 100,
        "maxDiameter": 200,
        "areParticlesWhite": false,
        "maxResolution": 20.0,
        "threshold": 0.0,
        "threshold2": 999.0,
        "extraParams": "",
        "streamingWarning": null,
        "streamingSleepOnWait": 0,
        "streamingBatchSize": 1,
        "hostName": "localhost",
        "numberOfMpi": 4
    },
    {
        "object.className": "SparxGaussianProtPicking",
        "object.id": "7124",
        "object.label": "eman2 - sparx gaussian picker",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "boxSize": 300,
        "lowerThreshold": 0.2,
        "higherThreshold": 30.0,
        "gaussWidth": 30.0,
        "useVarImg": false,
        "doInvert": true,
        "hostName": "localhost",
        "numberOfThreads": 1
    },
    {
        "object.className": "SphireProtCRYOLOPicking",
        "object.id": "7160",
        "object.label": "sphire - cryolo picking",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "inputModelFrom": 0,
        "conservPickVar": 0.3,
        "lowPassFilter": false,
        "absCutOffFreq": 0.1,
        "numCpus": 4,
        "input_size": 1024,
        "boxSize": 300,
        "max_box_per_image": 600,
        "useGpu": true,
        "gpuList": "0",
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 1,
        "streamingWarning": null,
        "streamingSleepOnWait": 0,
        "streamingBatchSize": 16
    },
    {
        "object.className": "XmippProtParticlePicking",
        "object.id": "7212",
        "object.label": "xmipp3 - manual-picking (step 1)",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "saveDiscarded": false,
        "doInteractive": true
    },
    {
        "object.className": "XmippParticlePickingAutomatic",
        "object.id": "7262",
        "object.label": "xmipp3 - auto-picking (step 2)",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "micsToPick": 0,
        "streamingWarning": null,
        "streamingSleepOnWait": 0,
        "streamingBatchSize": 1,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 1,
        "xmippParticlePicking": "7212."
    },
    {
        "object.className": "XmippProtScreenDeepConsensus",
        "object.id": "7306",
        "object.label": "xmipp3 - deep consensus picking",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "useGpu": true,
        "gpuList": "0",
        "hostName": "localhost",
        "numberOfThreads": 2,
        "modelInitialization": 0,
        "skipTraining": false,
        "inputCoordinates": [
            "7262.outputCoordinates",
            "7160.outputCoordinates",
            "7124.outputCoordinates",
            "7076.outputCoordinates"
        ],
        "consensusRadius": 0.1,
        "threshold": 0.5,
        "notePreprocess": null,
        "skipInvert": false,
        "ignoreCTF": true,
        "nEpochs": 50.0,
        "learningRate": 0.0001,
        "auto_stopping": true,
        "l2RegStrength": 1e-05,
        "nModels": 3,
        "doTesting": false,
        "addTrainingData": 1,
        "trainingDataType": 1,
        "trainPosWeight": 1,
        "trainNegWeight": 1
    },
    {
        "object.className": "XmippProtDeepConsSubSet",
        "object.id": "7405",
        "object.label": "create subset 0.5",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "other": "deepCons",
        "sqliteFile": "Runs/007306_XmippProtScreenDeepConsensus/particles_state.sqlite,",
        "outputClassName": "SetOfCoordinates",
        "inputObject": "7306.outputCoordinates"
    },
    {
        "object.className": "XmippProtDeepMicrographScreen",
        "object.id": "7445",
        "object.label": "xmipp3 - deep micrograph cleaner",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "micsSource": 0,
        "useOtherScale": 0,
        "threshold": -1.0,
        "streamingBatchSize": -1,
        "saveMasks": false,
        "useGpu": true,
        "gpuList": "0",
        "inputCoordinates": "7405.outputCoordinates"
    },
    {
        "object.className": "XmippProtExtractParticles",
        "object.id": "7502",
        "object.label": "xmipp3 - extract particles",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "downsampleType": 0,
        "downFactor": 2.5,
        "boxSize": 120,
        "doBorders": false,
        "doRemoveDust": true,
        "thresholdDust": 5.0,
        "doInvert": true,
        "doFlip": false,
        "doNormalize": true,
        "normType": 2,
        "backRadius": -1,
        "patchSize": -1,
        "hostName": "localhost",
        "numberOfThreads": 8,
        "numberOfMpi": 1,
        "inputCoordinates": "7445.outputCoordinates_Manual_097"
    },
    {
        "object.className": "XmippProtExtractParticles",
        "object.id": "8046",
        "object.label": "xmipp3 - extract particles 2/3 size",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "downsampleType": 0,
        "downFactor": 1.5,
        "boxSize": 250,
        "doBorders": false,
        "doRemoveDust": true,
        "thresholdDust": 5.0,
        "doInvert": true,
        "doFlip": false,
        "doNormalize": true,
        "normType": 2,
        "backRadius": -1,
        "patchSize": -1,
        "hostName": "localhost",
        "numberOfThreads": 8,
        "numberOfMpi": 1,
        "inputCoordinates": "8544.outputCoordinates"
    },
    {
        "object.className": "ProtCryo2D",
        "object.id": "8318",
        "object.label": "cryosparc2 - 2d classification",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 2,
        "numberOfClasses": 50,
        "maximunResolution": 6,
        "initialClassification": 2.0,
        "useCircular2D": true,
        "class2D_window_inner_A": null,
        "class2D_window_outer_A": null,
        "reCenter2D": true,
        "reCenterMask": 0.2,
        "reCenterMaskBinary": false,
        "forceMaxover": true,
        "ctfFlipPhases": false,
        "numberFinalIterator": 1,
        "numberOnlineEMIterator": 20,
        "batchSizeClass": 100,
        "initialScale2D": 1,
        "zeropadFactor": 2,
        "useFRCRegularized": true,
        "useFullFRC": true,
        "iterationToStartAnneling": 2,
        "iterationToStartAnneal": 15,
        "useWhiteNoiseModel": false,
        "compute_use_ssd": true,
        "gpuList": "0",
        "compute_lane": "default",
        "inputParticles": "7502.outputParticles"
    },
    {
        "object.className": "ProtUserSubSet",
        "object.id": "8385",
        "object.label": "noFerritin classes",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "other": "7548",
        "sqliteFile": "Runs/008318_ProtCryo2D/classes2D_state.sqlite,",
        "outputClassName": "SetOfClasses2D",
        "inputObject": "8318."
    },
    {
        "object.className": "XmippProtCenterParticles",
        "object.id": "8478",
        "object.label": "xmipp3 - center particles",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "hostName": "localhost",
        "inputClasses": "8385.outputClasses2D"
    },
    {
        "object.className": "XmippProtPickingRemoveDuplicates",
        "object.id": "8544",
        "object.label": "xmipp3 - remove duplicates",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "consensusRadius": 100,
        "inputCoordinates": "8478.outputCoordinates"
    }
]