[
    {
        "object.className": "ProtCryoSparcInitialModel",
        "object.id": "7846",
        "object.label": "cryosparc2 - initial model",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 1,
        "abinit_K": 1,
        "abinit_max_res": 12.0,
        "abinit_init_res": 35.0,
        "abinit_num_init_iters": 200,
        "abinit_num_final_iters": 300,
        "abinit_radwn_step": 0.04,
        "abinit_window": true,
        "abinit_center": true,
        "abinit_scale_mg_correct": false,
        "abinit_scale_compute": false,
        "abinit_mom": 0.0,
        "abinit_sparsity": 0.0,
        "abinit_minisize_init": 90,
        "abinit_minisize": 300,
        "abinit_minisize_epsilon": 0.05,
        "abinit_minisize_minp": 0.01,
        "abinit_minisize_num_init_iters": 300,
        "abinit_noise_model": 0,
        "abinit_noise_priorw": 50,
        "abinit_noise_initw": 5000,
        "abinit_class_anneal_beta": 0.1,
        "abinit_class_anneal_start": 300,
        "abinit_class_anneal_end": 350,
        "abinit_target_initial_ess_fraction": 0.011,
        "symmetryGroup": 3,
        "symmetryOrder": 1,
        "abinit_r_grid": 25.0,
        "abinit_high_lr_duration": 100.0,
        "abinit_high_lr": 0.4,
        "abinit_nonneg": true,
        "abinit_ignore_dc": true,
        "abinit_init_radwn_cutoff": 7,
        "abinit_search_start_iter": 200,
        "abinit_use_engine": true,
        "intermediate_plots": true,
        "compute_use_ssd": true,
        "gpuList": "0",
        "compute_lane": "default"
    },
    {
        "object.className": "XmippProtRansac",
        "object.id": "7920",
        "object.label": "xmipp3 - ransac",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "useGpu": true,
        "gpuList": "0",
        "symmetryGroup": "o",
        "angularSampling": 5.0,
        "nRansac": 400,
        "dimRed": false,
        "numGrids": 3,
        "numSamples": 8,
        "corrThresh": 0.77,
        "numVolumes": 10,
        "numIter": 10,
        "maxFreq": 12,
        "useAll": false,
        "hostName": "localhost",
        "numberOfThreads": 8,
        "numberOfMpi": 1
    },
    {
        "object.className": "ProtRelionInitialModel",
        "object.id": "7983",
        "object.label": "relion - 3D initial model",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "doContinue": false,
        "maskDiameterA": -1,
        "continueIter": "last",
        "continueMsg": "True",
        "doCTF": true,
        "haveDataBeenPhaseFlipped": null,
        "ignoreCTFUntilFirstPeak": false,
        "numberOfClasses": 1,
        "doFlattenSolvent": true,
        "symmetryGroup": "o",
        "angularSamplingDeg": 1,
        "offsetSearchRangePix": 6.0,
        "offsetSearchStepPix": 2.0,
        "numberOfIterInitial": 50,
        "numberOfIterInBetween": 200,
        "numberOfIterFinal": 50,
        "writeIter": 10,
        "initialRes": 35,
        "finalRes": 15,
        "initialBatch": 100,
        "finalBatch": 500,
        "sgdNoiseVar": -1,
        "useParallelDisk": true,
        "pooledParticles": 3,
        "skipPadding": false,
        "allParticlesRam": false,
        "scratchDir": null,
        "combineItersDisc": false,
        "doGpu": true,
        "gpusToUse": "",
        "extraParams": "",
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 3
    },
    {
        "object.className": "XmippProtReconstructSignificant",
        "object.id": "8163",
        "object.label": "xmipp3 - reconstruct significant",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "useGpu": false,
        "gpuList": "0",
        "symmetryGroup": "o",
        "thereisRefVolume": false,
        "angularSampling": 5.0,
        "minTilt": 0.0,
        "maxTilt": 180.0,
        "maximumShift": -1.0,
        "keepIntermediate": false,
        "useMaxRes": false,
        "maxResolution": 12.0,
        "alpha0": 98.0,
        "iter": 50,
        "alphaF": 99.999,
        "useImed": true,
        "strictDir": false,
        "angDistance": 10,
        "dontApplyFisher": false,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 8
    },
    {
        "object.className": "XmippProtCropResizeVolumes",
        "object.id": "8661",
        "object.label": "xmipp3 - crop/resize volumes (2)",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "doResize": true,
        "resizeOption": 0,
        "resizeSamplingRate": 1.24,
        "doFourier": false,
        "resizeDim": 0,
        "resizeFactor": 0.5,
        "resizeLevel": 0,
        "hugeFile": false,
        "doWindow": true,
        "windowOperation": 1,
        "cropSize": 0,
        "windowSize": 120,
        "hostName": "localhost",
        "numberOfThreads": 2,
        "numberOfMpi": 1,
        "inputVolumes": "7846.outputVolumes.1"
    },
    {
        "object.className": "XmippProtAlignVolume",
        "object.id": "8709",
        "object.label": "xmipp3 - align volume",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "inputVolumes": [
            "8163.outputVolume",
            "8661.outputVol",
            "7983.outputVolume",
            "7920.outputVolumes.1",
            "7920.outputVolumes.2",
            "7920.outputVolumes.3",
            "7920.outputVolumes.4",
            "7920.outputVolumes.5",
            "7920.outputVolumes.6",
            "7920.outputVolumes.7",
            "7920.outputVolumes.8",
            "7920.outputVolumes.9",
            "7920.outputVolumes.10"
        ],
        "applyMask": false,
        "maskType": 0,
        "maskRadius": -1,
        "alignmentAlgorithm": 3,
        "minRotationalAngle": 0.0,
        "maxRotationalAngle": 360.0,
        "stepRotationalAngle": 5.0,
        "minTiltAngle": 0.0,
        "maxTiltAngle": 180.0,
        "stepTiltAngle": 5.0,
        "minInplaneAngle": 0.0,
        "maxInplaneAngle": 360.0,
        "stepInplaneAngle": 5.0,
        "minimumShiftX": 0.0,
        "maximumShiftX": 0.0,
        "stepShiftX": 1.0,
        "minimumShiftY": 0.0,
        "maximumShiftY": 0.0,
        "stepShiftY": 1.0,
        "minimumShiftZ": 0.0,
        "maximumShiftZ": 0.0,
        "stepShiftZ": 1.0,
        "minimumScale": 1.0,
        "maximumScale": 1.0,
        "stepScale": 0.005,
        "initialRotAngle": 0.0,
        "initialTiltAngle": 0.0,
        "initialInplaneAngle": 0.0,
        "initialShiftX": 0.0,
        "initialShiftY": 0.0,
        "initialShiftZ": 0.0,
        "optimizeScale": false,
        "initialScale": 1.0,
        "hostName": "localhost",
        "numberOfThreads": 8,
        "numberOfMpi": 1,
        "inputReference": "8163.outputVolume"
    },
    {
        "object.className": "XmippProtReconstructSwarm",
        "object.id": "8819",
        "object.label": "xmipp3 - swarm consensus",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "useGpu": true,
        "gpuList": "0",
        "particleRadius": -1,
        "symmetryGroup": "o",
        "numberOfIterations": 15,
        "targetResolution": 12.0,
        "minAngle": 10.0,
        "NimgTrain": 500,
        "NimgTest": 100,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 12,
        "inputVolumes": "8709.outputVolumes"
    },
    {
        "object.className": "XmippProtCropResizeVolumes",
        "object.id": "8886",
        "object.label": "xmipp3 - crop/resize volumes 2/3",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "doResize": true,
        "resizeOption": 0,
        "resizeSamplingRate": 0.74,
        "doFourier": false,
        "resizeDim": 0,
        "resizeFactor": 0.5,
        "resizeLevel": 0,
        "hugeFile": false,
        "doWindow": true,
        "windowOperation": 1,
        "cropSize": 0,
        "windowSize": 250,
        "hostName": "localhost",
        "numberOfThreads": 2,
        "numberOfMpi": 1,
        "inputVolumes": "8819.outputVolume"
    }
]