[
    {
        "object.className": "ProtImportMovies",
        "object.id": "6299",
        "object.label": "pwem - import movies",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "importFrom": 0,
        "filesPath": "/home/scipion/ScipionUserData/projects/Example_10248_Scipion3/EMPIAR/",
        "filesPattern": "*.tiff",
        "copyFiles": false,
        "haveDataBeenPhaseFlipped": false,
        "acquisitionWizard": null,
        "voltage": 300.0,
        "sphericalAberration": 2.7,
        "amplitudeContrast": 0.1,
        "magnification": 50000,
        "samplingRateMode": 0,
        "samplingRate": 0.495,
        "scannedPixelSize": 7.0,
        "doseInitial": 0.0,
        "dosePerFrame": null,
        "gainFile": "/home/scipion/ScipionUserData/projects/Example_10248_Scipion3/EMPIAR/gain.mrc",
        "darkFile": null,
        "dataStreaming": false,
        "timeout": 43200,
        "fileTimeout": 30,
        "blacklistDateFrom": null,
        "blacklistDateTo": null,
        "useRegexps": true,
        "blacklistFile": null,
        "inputIndividualFrames": false,
        "numberOfIndividualFrames": null,
        "stackFrames": false,
        "writeMoviesInProject": false,
        "movieSuffix": "_frames.mrcs",
        "deleteFrames": false
    },
    {
        "object.className": "XmippProtMovieGain",
        "object.id": "6383",
        "object.label": "xmipp3 - movie gain",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "frameStep": 5,
        "movieStep": 250,
        "estimateOrientation": true,
        "normalizeGain": true,
        "useExistingGainImage": true,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "numberOfMpi": 1,
        "inputMovies": "6299.outputMovies"
    },
    {
        "object.className": "XmippProtMovieCorr",
        "object.id": "6458",
        "object.label": "xmipp3 - FlexAlign",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "alignFrame0": 1,
        "alignFrameN": 0,
        "useAlignToSum": true,
        "sumFrame0": 1,
        "sumFrameN": 0,
        "binFactor": 1.0,
        "cropOffsetX": 0,
        "cropOffsetY": 0,
        "cropDimX": 0,
        "cropDimY": 0,
        "doSaveAveMic": true,
        "doSaveMovie": false,
        "splineOrder": 1,
        "useGpu": true,
        "gpuList": "0",
        "maxResForCorrelation": 30.0,
        "doComputePSD": true,
        "maxShift": 30,
        "outsideMode": 0,
        "doLocalAlignment": true,
        "autoControlPoints": true,
        "minLocalRes": 500.0,
        "skipAutotuning": false,
        "controlPointX": 9,
        "controlPointY": 9,
        "controlPointT": 10,
        "groupNFrames": 3,
        "outsideValue": 0.0,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 1,
        "inputMovies": "6383.outputMovies"
    },
    {
        "object.className": "XmippProtMovieMaxShift",
        "object.id": "6557",
        "object.label": "xmipp3 - movie maxshift",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "rejType": 3,
        "maxFrameShift": 5.0,
        "maxMovieShift": 20.0,
        "inputMovies": "6458.outputMovies"
    },
    {
        "object.className": "CistemProtCTFFind",
        "object.id": "6631",
        "object.label": "cistem - ctffind4",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "recalculate": false,
        "sqliteFile": null,
        "inputType": 1,
        "avgFrames": 3,
        "usePowerSpectra": false,
        "windowSize": 512,
        "lowRes": 30.0,
        "highRes": 5.0,
        "minDefocus": 5000.0,
        "maxDefocus": 50000.0,
        "stepDefocus": 100.0,
        "slowSearch": false,
        "fixAstig": true,
        "astigmatism": 100.0,
        "findPhaseShift": false,
        "minPhaseShift": 0.0,
        "maxPhaseShift": 180.0,
        "stepPhaseShift": 10.0,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "numberOfMpi": 1,
        "streamingWarning": null,
        "streamingSleepOnWait": 0,
        "streamingBatchSize": 1,
        "inputMicrographs": "6557.outputMicrographs"
    },
    {
        "object.className": "ProtGctf",
        "object.id": "6692",
        "object.label": "gctf - ctf estimation",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "recalculate": false,
        "sqliteFile": null,
        "ctfDownFactor": 1.0,
        "windowSize": 1024,
        "lowRes": 50.0,
        "highRes": 4.0,
        "minDefocus": 5000.0,
        "maxDefocus": 90000.0,
        "stepDefocus": 100.0,
        "astigmatism": 1000.0,
        "plotResRing": true,
        "gpuList": "0",
        "doEPA": false,
        "EPAsmp": 4,
        "doBasicRotave": false,
        "overlap": 0.5,
        "convsize": 85,
        "smoothResL": 1000,
        "bfactor": 150,
        "doHighRes": false,
        "HighResL": 15.0,
        "HighResH": 4.0,
        "HighResBf": 50,
        "doValidate": false,
        "doPhShEst": false,
        "phaseShiftL": 0.0,
        "phaseShiftH": 180.0,
        "phaseShiftS": 10.0,
        "phaseShiftT": 0,
        "coSearchRefine": false,
        "refine2DT": 1,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 1,
        "streamingWarning": null,
        "streamingSleepOnWait": 0,
        "streamingBatchSize": 1,
        "inputMicrographs": "6557.outputMicrographs"
    },
    {
        "object.className": "XmippProtCTFConsensus",
        "object.id": "6819",
        "object.label": "xmipp3 - ctf consensus GCTF+CTFFind4",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "useDefocus": true,
        "minDefocus": 4000.0,
        "maxDefocus": 40000.0,
        "useAstigmatism": true,
        "astigmatism": 1000.0,
        "useResolution": true,
        "resolution": 4.0,
        "useCritXmipp": false,
        "critFirstZero": 5.0,
        "minCritFirstZeroRatio": 0.9,
        "maxCritFirstZeroRatio": 1.1,
        "critCorr": 0.05,
        "critCtfMargin": 1.5,
        "critIceness": 1.05,
        "minCritNonAstigmaticValidity": 0.3,
        "maxCritNonAstigmaticValidity": 9.0,
        "calculateConsensus": true,
        "minConsResol": 4.0,
        "averageDefocus": true,
        "includeSecondary": true,
        "hostName": "localhost",
        "inputCTF": "6631.outputCTF",
        "inputCTF2": "6692.outputCTF"
    },
    {
        "object.className": "XmippProtCTFMicrographs",
        "object.id": "6932",
        "object.label": "xmipp3 - ctf estimation",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "recalculate": false,
        "sqliteFile": null,
        "AutoDownsampling": false,
        "ctfDownFactor": 2.0,
        "doInitialCTF": true,
        "doOptimizeDefocus": false,
        "findPhaseShift": false,
        "doCTFAutoDownsampling": true,
        "refineAmplitudeContrast": false,
        "skipBorders": false,
        "lowRes": 0.05,
        "highRes": 0.5,
        "minDefocus": 0.25,
        "maxDefocus": 4.0,
        "windowSize": 512,
        "hostName": "localhost",
        "numberOfThreads": 6,
        "numberOfMpi": 1,
        "inputMicrographs": "6819.outputMicrographs",
        "ctfRelations": "6819.outputCTF"
    },
    {
        "object.className": "XmippProtCTFConsensus",
        "object.id": "6988",
        "object.label": "xmipp3 - ctf consensus GCTF+CTFFind4+Xmipp",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "useDefocus": true,
        "minDefocus": 4000.0,
        "maxDefocus": 40000.0,
        "useAstigmatism": true,
        "astigmatism": 1000.0,
        "useResolution": true,
        "resolution": 4.0,
        "useCritXmipp": true,
        "critFirstZero": 5.0,
        "minCritFirstZeroRatio": 0.9,
        "maxCritFirstZeroRatio": 1.1,
        "critCorr": 0.05,
        "critCtfMargin": 1.5,
        "critIceness": 1.05,
        "minCritNonAstigmaticValidity": 0.3,
        "maxCritNonAstigmaticValidity": 4.0,
        "calculateConsensus": true,
        "minConsResol": 4.0,
        "averageDefocus": true,
        "includeSecondary": true,
        "hostName": "localhost",
        "inputCTF2": "6819.outputCTF",
        "inputCTF": "6932.outputCTF"
    }
]